PsychoPy2experiment version="2024.2.3"
Settings
  Audio lib = ptb
  Completed URL = https://app.prolific.com/submissions/complete?cc=CADE259Q
  Experiment info = {'participant': '', 'session': '', 'language': '["Spanish", "English", "French"]', 'response_mode': '["Both hands", "Right hand", "Left hand"]', 'practice_block': '["Yes", "No"]', 'n_angles': '[ "8 (increments of 45º)", "4 (increments of 90º)", "6 (increments of 60º)", "12 (increments of 30º)"]', 'hand_views': '["Palmar and Dorsal", "Palmar", "Dorsal"]', 'n_reps': '["8", "12", "4"]', 'feedback': '["0.3", "0.5", "0.8", "1", "No feedback"]'}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['HLJT_images.xlsx', 'HLJT_instructions_both.xlsx', 'HLJT_instructions_left.xlsx', 'HLJT_instructions_right.xlsx', 'HLJT_block_messages_long.xlsx', 'hljt_instr_images/instr_pic1.jpg', 'hljt_instr_images/instr_pic2_both.jpg', 'hljt_instr_images/instr_pic2_left.jpg', 'hljt_instr_images/instr_pic2_right.jpg', 'hljt_instr_images/instr_pic3.jpg', 'hljt_images/left_dorsal.png', 'hljt_images/left_palmar.png', 'hljt_images/right_dorsal.png', 'hljt_images/right_palmar.png']
  Screen = 2
  Show mouse = True
  Units = height
  Use version = 2024.2.1
  Window size (pixels) = [1920, 1080]
  color = 1.0000, 1.0000, 1.0000
  expName = HLJT_local
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine Welcome
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    CodeComponent welcome_code
      Code Type = Auto->JS
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      Begin Routine:
        # get Start time and add to data output
        start_time = core.getTime()
        thisExp.addData('start_time', start_time)
    TextComponent welcome_text1
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $welcome_msg
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    TextComponent welcome_text2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.045
      pos = (0, -0.45)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $adv_msg
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    KeyboardComponent welcome_adv_key
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      store = nothing
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  Routine Goodbye
    RoutineSettingsComponent Goodbye
      stopVal [duration (s)] = 3
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    CodeComponent code_exit
      Code Type = Auto->JS
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      Begin Routine:
        # get Finish time and add to data output
        end_time = core.getTime()
        thisExp.addData('end_time', end_time)

        # calculate experiment time and add to data output
        completion_time = end_time - start_time
        thisExp.addData('completion_time', completion_time)
    TextComponent bye_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $bye_msg
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    KeyboardComponent Exit
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
      store = nothing
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  Routine ITI
    RoutineSettingsComponent ITI
      saveStartStop = False
      stopVal [duration (s)] = $current_iti
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    CodeComponent code_iti
      Code Type = Auto->JS
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      Begin Experiment:
        current_iti = 0.8
        iti_index = 0
      Begin Routine:
        # obtain current iti through the index
        current_iti = iti_list[iti_index]

        # increase for next trial
        iti_index += 1

        # check if the list has finished
        if iti_index >= len(iti_list):
            iti_index = 0

        # add to output
        thisExp.addData('ITI', current_iti)
    PolygonComponent pract_fix_cross_2
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      saveStartStop = False
      shape = cross
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    PolygonComponent box_left
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (-0.1, -0.4)
      saveStartStop = False
      shape = rectangle
      size = (0.07, 0.07)
      startVal [time (s)] = 0.0
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    PolygonComponent box_right
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (0.1, -0.4)
      saveStartStop = False
      shape = rectangle
      size = (0.07, 0.07)
      startVal [time (s)] = 0.0
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  Routine instructions
    RoutineSettingsComponent instructions
      saveStartStop = False
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    CodeComponent hljt_instr_code
      Code Type = Auto->JS
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      Begin Experiment:
        text_position = [-0.35, 0]
      Begin Routine:
        # get column from excel sheet based on language code
        try:
            instr_msg = eval(f"instr_msg_{lang_code}")
        # default to english if this fails
        except NameError:
            instr_msg = instr_msg_EN

        # set position of text for last screen
        if expInfo["feedback"] == "No feedback" and instructions_loop.thisN == 2:
            continueRoutine = False
    TextComponent hljt_instr_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.04
      pos [set every repeat] = text_position
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $instr_msg
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    ImageComponent hljt_instr_image
      image [set every repeat] = $instr_pics
      pos = (0.5, 0)
      saveStartStop = False
      size [set every repeat] = [images_sizeW, images_sizeH]
      startVal [time (s)] = 0.0
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    TextComponent hljt_instr_adv_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.045
      pos = (0, -0.45)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $adv_msg
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    KeyboardComponent hljt_instr_adv_key
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.2
      store = nothing
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  Routine countdown
    RoutineSettingsComponent countdown
      saveStartStop = False
      stopVal [duration (s)] = 3
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    TextComponent countdown_3
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.07
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.9
      text = 3
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    TextComponent countdown_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.07
      saveStartStop = False
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.9
      text = 2
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    TextComponent countdown_1
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.07
      saveStartStop = False
      startVal [time (s)] = 2
      stopVal [duration (s)] = 0.9
      text = 1
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    KeyboardComponent hljt_go_to_experiment_key
      allowedKeys = 'space', 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      store = nothing
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  Routine pract_trial
    RoutineSettingsComponent pract_trial
      saveStartStop = False
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        correct_keys = "" # encodes which column to use from Excel file
        resp_keys = "" # variable to select the keys to be used
      Begin Routine:
        # column from conditions file to get correct responses
        if expInfo['response_mode'] == "Both hands":
            correct_keys = hljt_correct_both
            resp_keys = ["s", "l"]
        elif expInfo['response_mode'] == "Right hand":
            correct_keys = hljt_correct_one
            resp_keys = ["g", "h"]
        elif expInfo['response_mode'] == "Left hand":
            correct_keys = hljt_correct_one
            resp_keys = ["g", "h"]
    PolygonComponent pract_square
      fillColor = white
      saveStartStop = False
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0
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    ImageComponent pract_hljt_image
      color = 1.0000, 1.0000, 1.0000
      image [set every repeat] = $hljt_images
      ori [set every repeat] = hljt_angle
      size = (0.45, 0.45)
      startVal [time (s)] = 0
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    KeyboardComponent pract_hljt_response
      allowedKeys = resp_keys
      correctAns = $correct_keys
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = first key
      storeCorrect = True
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    PolygonComponent square_left
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (-0.1, -0.4)
      saveStartStop = False
      shape = rectangle
      size = (0.07, 0.07)
      startVal [time (s)] = 0.0
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    PolygonComponent square_right
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (0.1, -0.4)
      saveStartStop = False
      shape = rectangle
      size = (0.07, 0.07)
      startVal [time (s)] = 0.0
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  Routine pract_feedback
    RoutineSettingsComponent pract_feedback
      saveStartStop = False
      stopVal [duration (s)] = $feedback_time_pract
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    CodeComponent pract_feedback_code
      Code Type = Auto->JS
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      Begin Experiment:
        black = [-1, -1, -1]
        green = [-1, 0.0039, -1]
        red = [1, -1, -1]

        fill_left = black
        fill_right = black

        feedback_time_pract = feedback_time
      Begin Routine:
        # set feedback even feedback_time == 0
        if feedback_time == 0:
            feedback_time_pract = 0.3
        else:
            feedback_time_pract = feedback_time

        # If response is correct:
        if pract_hljt_response.corr == 1:
            if correct_keys == hljt_correct_both:
                if pract_hljt_response.keys == "s":
                    fill_left = green
                    fill_right = black
                elif pract_hljt_response.keys == "l":
                    fill_left = black
                    fill_right = green
            elif correct_keys == hljt_correct_one:
                if pract_hljt_response.keys == "g":
                    fill_left = green
                    fill_right = black
                elif pract_hljt_response.keys == "h":
                    fill_left = black
                    fill_right = green

        #If response is incorrect:
        if pract_hljt_response.corr == 0:
            if correct_keys == hljt_correct_both:
                if pract_hljt_response.keys == "s":
                    fill_left = red
                    fill_right = black
                elif pract_hljt_response.keys == "l":
                    fill_left = black
                    fill_right = red
            elif correct_keys == hljt_correct_one:
                if pract_hljt_response.keys == "g":
                    fill_left = red
                    fill_right = black
                elif pract_hljt_response.keys == "h":
                    fill_left = black
                    fill_right = red
    PolygonComponent pract_square_2
      fillColor = white
      lineColor = 1.0000, 1.0000, 1.0000
      saveStartStop = False
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0
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    ImageComponent pract_hljt_image_2
      color = 1.0000, 1.0000, 1.0000
      image [set every repeat] = $hljt_images
      ori [set every repeat] = hljt_angle
      saveStartStop = False
      size = (0.45, 0.45)
      startVal [time (s)] = 0
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    PolygonComponent square_left_2
      fillColor [set every repeat] = $fill_left
      lineColor [set every repeat] = $fill_left
      pos = (-0.1, -0.4)
      saveStartStop = False
      shape = rectangle
      size = (0.07, 0.07)
      startVal [time (s)] = 0.0
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    PolygonComponent square_right_2
      fillColor [set every repeat] = $fill_right
      lineColor [set every repeat] = $fill_right
      pos = (0.1, -0.4)
      saveStartStop = False
      shape = rectangle
      size = (0.07, 0.07)
      startVal [time (s)] = 0.0
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  Routine block_welcome
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    CodeComponent test_code_2
      Code Type = Auto->JS
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      Begin Routine:
        # get column from excel sheet based on language code
        try:
            block_msg = eval(f"block_msg_{lang_code}")
        # default to english if this fails
        except NameError:
            block_msg = block_msg_EN
    TextComponent hljt_block_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $block_msg
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    TextComponent hljt_block_adv
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.045
      pos = (0, -0.45)
      saveStartStop = False
      startVal [time (s)] = 5
      text [set every repeat] = $adv_msg
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    KeyboardComponent hljt_test_adv_key
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 5
      store = nothing
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  Routine block_pause
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    CodeComponent hljt_block_pause_code
      Code Type = Auto->JS
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      Begin Routine:
        # get column from excel sheet based on language code
        try:
           block_pause_msg = eval(f"block_pause_msg_{lang_code}")
        # default to english if this fails
        except NameError:
            block_pause_msg = block_pause_msg_EN
    TextComponent hljt_block_pause_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $block_pause_msg
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    TextComponent hljt_block_adv_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.045
      pos = (0, -0.45)
      saveStartStop = False
      startVal [time (s)] = 5
      text [set every repeat] = $adv_msg
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    KeyboardComponent hljt_block_adv_key
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 5
      store = nothing
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  Routine test_feedback
    RoutineSettingsComponent test_feedback
      stopVal [duration (s)] = $feedback_time
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    CodeComponent test_feedback_code
      Code Type = Auto->JS
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      Begin Routine:
        # If response is correct:
        if test_hljt_response.corr == 1:
            if correct_keys == hljt_correct_both:
                if test_hljt_response.keys == "s":
                    fill_left = green
                    fill_right = black
                elif test_hljt_response.keys == "l":
                    fill_left = black
                    fill_right = green
            elif correct_keys == hljt_correct_one:
                if test_hljt_response.keys == "g":
                    fill_left = green
                    fill_right = black
                elif test_hljt_response.keys == "h":
                    fill_left = black
                    fill_right = green

        #If response is incorrect:
        if test_hljt_response.corr == 0:
            if correct_keys == hljt_correct_both:
                if test_hljt_response.keys == "s":
                    fill_left = red
                    fill_right = black
                elif test_hljt_response.keys == "l":
                    fill_left = black
                    fill_right = red
            elif correct_keys == hljt_correct_one:
                if test_hljt_response.keys == "g":
                    fill_left = red
                    fill_right = black
                elif test_hljt_response.keys == "h":
                    fill_left = black
                    fill_right = red
    PolygonComponent test_square_2
      fillColor = white
      saveStartStop = False
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0
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    ImageComponent test_hljt_image_2
      color = 1.0000, 1.0000, 1.0000
      image [set every repeat] = $hljt_images
      ori [set every repeat] = hljt_angle
      saveStartStop = False
      size = (0.45, 0.45)
      startVal [time (s)] = 0
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    PolygonComponent square_left_4
      fillColor [set every repeat] = $fill_left
      lineColor [set every repeat] = $fill_left
      pos = (-0.1, -0.4)
      saveStartStop = False
      shape = rectangle
      size = (0.07, 0.07)
      startVal [time (s)] = 0.0
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    PolygonComponent square_right_4
      fillColor [set every repeat] = $fill_right
      lineColor [set every repeat] = $fill_right
      pos = (0.1, -0.4)
      saveStartStop = False
      shape = rectangle
      size = (0.07, 0.07)
      startVal [time (s)] = 0.0
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  Routine test_trial
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        # column from conditions file to get correct responses
        if expInfo['response_mode'] == "Both hands":
            correct_keys = hljt_correct_both
            resp_keys = ["s", "l"]
        elif expInfo['response_mode'] == "Right hand":
            correct_keys = hljt_correct_one
            resp_keys = ["g", "h"]
        elif expInfo['response_mode'] == "Left hand":
            correct_keys = hljt_correct_one
            resp_keys = ["g", "h"]
    PolygonComponent test_square
      fillColor = white
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0
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    ImageComponent test_hljt_image
      color = 1.0000, 1.0000, 1.0000
      image [set every repeat] = $hljt_images
      ori [set every repeat] = hljt_angle
      size = (0.45, 0.45)
      startVal [time (s)] = 0
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    KeyboardComponent test_hljt_response
      allowedKeys = resp_keys
      correctAns = $correct_keys
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = first key
      storeCorrect = True
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    PolygonComponent square_left_3
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (-0.1, -0.4)
      shape = rectangle
      size = (0.07, 0.07)
      startVal [time (s)] = 0.0
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    PolygonComponent square_right_3
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (0.1, -0.4)
      shape = rectangle
      size = (0.07, 0.07)
      startVal [time (s)] = 0.0
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  Routine experiment_settings
    RoutineSettingsComponent experiment_settings
      saveStartStop = False
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    CodeComponent response_mode
      Code Type = Auto->JS
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      Begin Experiment:
        use_i = "" # encodes which Excel file to use

        # response mode
        if expInfo['response_mode'] == "Both hands":
            use_i = "hljt_files/Instructions_both_hands.xlsx"
        elif expInfo['response_mode'] == "Right hand":
            use_i = "hljt_files/Instructions_right_hand.xlsx"
        elif expInfo['response_mode'] == "Left hand":
            use_i = "hljt_files/Instructions_left_hand.xlsx"
    CodeComponent number_of_stimuli
      Code Type = Auto->JS
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      Begin Experiment:
        # number of stimuli
        # n_reps sets the number of repetitions per block
        # there are four blocks
        # therefore if n_reps = 1, total = 4, etc.
        n_reps = 1

        if expInfo['n_reps'] == "4":
            n_reps = n_reps*1
        elif expInfo['n_reps'] == "8":
            n_reps = n_reps*2
        elif expInfo['n_reps'] == "12":
            n_reps = n_reps*3
    CodeComponent feedback
      Code Type = Auto->JS
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      Begin Experiment:
        # define feedback time
        feedback_time = expInfo["feedback"]

        if feedback_time == "No feedback":
            feedback_time = 0
        else:
            feedback_time = float(feedback_time)
    CodeComponent practice_block
      Code Type = Auto->JS
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      Begin Experiment:
        if expInfo['practice_block'] == "Yes":
            pract_block = 1
        else:
            pract_block = 0
    CodeComponent number_of_angles
      Code Type = Auto->JS
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      Begin Experiment:
        conditions_file = "Stimuli_4angles.xlsx"

        if expInfo['n_angles'] == "4 (increments of 90º)":
            conditions_file = "hljt_files/Stimuli_4angles.xlsx"
        elif expInfo['n_angles'] == "6 (increments of 60º)":
            conditions_file = "hljt_files/Stimuli_6angles.xlsx"
        elif expInfo['n_angles'] == "8 (increments of 45º)":
            conditions_file = "hljt_files/Stimuli_8angles.xlsx"
        elif expInfo['n_angles'] == "12 (increments of 30º)":
            conditions_file = "hljt_files/Stimuli_12angles.xlsx"
    CodeComponent hand_views
      Code Type = Auto->JS
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      Begin Experiment:
        import pandas as pd

        # load conditions file in data frame
        conditions_df = pd.read_excel(conditions_file)

        # filter based on view
        if expInfo['hand_views'] == "Palmar":
            filtered_df = conditions_df[conditions_df['hljt_view'] == 'palmar']
        elif expInfo['hand_views'] == "Dorsal":
            filtered_df = conditions_df[conditions_df['hljt_view'] == 'dorsal']
        else:
            filtered_df = conditions_df

        # generate conditions file for this run. It overwrites
        trial_conditions = "Stimuli_last_run.csv"
        filtered_df.to_csv(trial_conditions, index=False)
    CodeComponent inter_trial_interval
      Code Type = Auto->JS
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      Begin Experiment:
        import numpy as np

        # Definir los parámetros
        n_trials = 600
        block_size = 50
        low_iti_range = (0.6, 1)
        high_prob_range = (0.75, 0.85)
        high_prob_percentage = 0.5  # 50% de los valores entre 750 y 850 ms

        # Crear la lista de ITIs
        iti_list = []

        for block in range(n_trials // block_size):
            # Para cada bloque de 50 trials:
            n_high_prob = int(block_size * high_prob_percentage)  # Número de ITIs en el rango de alta probabilidad
            n_low_prob = block_size - n_high_prob  # El resto será en el rango general

            # Generar ITIs en el rango 750-850
            high_prob_itis = np.random.uniform(low=high_prob_range[0], high=high_prob_range[1], size=n_high_prob)

            # Generar ITIs en el rango general (600-1000), excluyendo el rango de 750-850
            low_prob_itis = []
            while len(low_prob_itis) < n_low_prob:
                iti = np.random.uniform(low=low_iti_range[0], high=low_iti_range[1])
                if not (high_prob_range[0] <= iti <= high_prob_range[1]):
                    low_prob_itis.append(iti)

            # Combinar los ITIs de alta y baja probabilidad
            block_itis = np.concatenate((high_prob_itis, low_prob_itis))

            # Mezclar aleatoriamente los ITIs dentro del bloque para evitar orden predecible
            np.random.shuffle(block_itis)

            # Agregar el bloque a la lista completa
            iti_list.extend(block_itis)
  Routine pract_welcome
    RoutineSettingsComponent pract_welcome
      saveStartStop = False
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    TextComponent pract_welc_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $pract_welc_msg
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    KeyboardComponent pract_welc_adv
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
      store = nothing
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  Routine language_settings
    RoutineSettingsComponent language_settings
      saveStartStop = False
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    CodeComponent code_python
      Code Type = Py
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      Begin Experiment:
        ## THIS CODE ONLY WORKS IN PYTHON, NOT JAVASCRIPT ##

        # import python package to read Excel file *at the beginning of the experiment*
        import pandas as pd
        # make sure lang_code is defined and set to EN as default
        lang_code = "EN"
        # read excel file with messages according to language codes
        messages_df = pd.read_excel('Messages.xlsx')
        # create an empty global dictionary with the messages
        MESSAGES = {}
        # assign each value of language to the corresponding key of language (language code)
        for idx, row in messages_df.iterrows():
            key = row['message']
            MESSAGES[key] = {}
            for col in row.index:
                if col != 'message':
                    MESSAGES[key][col] = row[col]
        # create global variables with the list of messages to be usable throuhgout the experiment
        for key in MESSAGES:
            globals()[key] = MESSAGES[key].get(lang_code, MESSAGES[key]['EN'])  # fallback to English if language is not localised
      Begin Routine:
        # update language code based on the selected language in dialogue box
        if language == expInfo['language']:
            # we 'code' as a variable directly because it's already loaded in the localiser excel sheet
            lang_code = ISO_code
            thisExp.addData("language_code", lang_code)  # add it to output
            # update global variables with new language
            # allow the messages to be used throughout the experiment by making them global variables
            for key in MESSAGES:
                globals()[key] = MESSAGES[key].get(lang_code, MESSAGES[key]['EN']) # defaults to english if something is wrong
Flow
  LoopInitiator language_loop loopType="TrialHandler"
    conditionsFile = Language_localiser.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'language': 'English', 'ISO_code': 'EN'},
      {'language': 'Spanish', 'ISO_code': 'ES'},
      {'language': 'French', 'ISO_code': 'FR'}]
    Routine language_settings
  LoopTerminator language_loop
  Routine experiment_settings
  Routine Welcome
  LoopInitiator instructions_loop loopType="TrialHandler"
    conditionsFile = $use_i
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine instructions
  LoopTerminator instructions_loop
  LoopInitiator pract_block loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = pract_block
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    Routine pract_welcome
    Routine countdown
    LoopInitiator pract_loop loopType="TrialHandler"
      conditionsFile = $trial_conditions
      loopType = random
      nReps = 1
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      conditions:
        [{'hljt_images': 'hljt_images/right_palmar.png', 'hljt_side': 'right', 'hljt_view': 'palmar', 'hljt_angle': 0, 'hljt_direction': 'up', 'hljt_correct_both': 'l', 'hljt_correct_one': 'h'},
        {'hljt_images': 'hljt_images/right_palmar.png', 'hljt_side': 'right', 'hljt_view': 'palmar', 'hljt_angle': 45, 'hljt_direction': 'lateral', 'hljt_correct_both': 'l', 'hljt_correct_one': 'h'},
        {'hljt_images': 'hljt_images/right_palmar.png', 'hljt_side': 'right', 'hljt_view': 'palmar', 'hljt_angle': 90, 'hljt_direction': 'lateral', 'hljt_correct_both': 'l', 'hljt_correct_one': 'h'},
        {'hljt_images': 'hljt_images/right_palmar.png', 'hljt_side': 'right', 'hljt_view': 'palmar', 'hljt_angle': 135, 'hljt_direction': 'lateral', 'hljt_correct_both': 'l', 'hljt_correct_one': 'h'},
        {'hljt_images': 'hljt_images/right_palmar.png', 'hljt_side': 'right', 'hljt_view': 'palmar', 'hljt_angle': 180, 'hljt_direction': 'down', 'hljt_correct_both': 'l', 'hljt_correct_one': 'h'},
        {'hljt_images': 'hljt_images/right_palmar.png', 'hljt_side': 'right', 'hljt_view': 'palmar', 'hljt_angle': 225, 'hljt_direction': 'medial', 'hljt_correct_both': 'l', 'hljt_correct_one': 'h'},
        {'hljt_images': 'hljt_images/right_palmar.png', 'hljt_side': 'right', 'hljt_view': 'palmar', 'hljt_angle': 270, 'hljt_direction': 'medial', 'hljt_correct_both': 'l', 'hljt_correct_one': 'h'}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
      Routine ITI
      Routine pract_trial
      Routine pract_feedback
    LoopTerminator pract_loop
  LoopTerminator pract_block
  LoopInitiator test_block loopType="TrialHandler"
    conditionsFile = hljt_files/Block_messages.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'block_msg_EN': 'Now you are going to do the test blocks\n\nThere are 4 blocks, with a break between them', 'block_pause_msg_EN': 'You have finished the first block', 'block_msg_ES': 'Ahora vas a realizar los bloques de prueba\n\nHay 4 bloques, con un descanso entre ellos', 'block_pause_msg_ES': 'Has finalizado el primer bloque', 'block_msg_FR': 'Vous allez maintenant faire les blocs de test\n\nIl y a 4 blocs, avec une pause entre les deux', 'block_pause_msg_FR': 'Vous avez terminé le premier bloc'},
      {'block_msg_EN': 'Now you are going to start the second block\n\nRemember that your goal is to answer as QUICKLY AND ACCURATELY as possible', 'block_pause_msg_EN': 'You have finished the second block', 'block_msg_ES': 'Ahora vas a empezar el segundo bloque\n\nRecuerda que tu objetivo es contestar tan PRECISA Y RÁPIDAMENTE como puedas', 'block_pause_msg_ES': 'Has finalizado el segundo bloque', 'block_msg_FR': "Vous allez maintenant commencer le deuxième bloc\n\nN'oubliez pas que votre objectif est de répondre le PLUS PRÉCISÉMENT ET LE PLUS RAPIDEMENT possible.", 'block_pause_msg_FR': 'Vous avez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,
      {'block_msg_EN': 'Now you are going to start the third block\n\nRemember that your goal is to answer as QUICKLY AND ACCURATELY as possible', 'block_pause_msg_EN': 'You have finished the third block', 'block_msg_ES': 'Ahora vas a empezar el tercer bloque\n\nRecuerda que tu objetivo es contestar tan PRECISA Y RÁPIDAMENTE como puedas', 'block_pause_msg_ES': 'Has finalizado el tercer bloque', 'block_msg_FR': "Vous  allez maintenant commencer le troisième bloc\n\nN'oubliez pas que votre objectif est de répondre le PLUS PRÉCISÉMENT ET LE PLUS RAPIDEMENT possible.", 'block_pause_msg_FR': 'Vous avez t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,
      {'block_msg_EN': 'Now you are going to start the last block\n\nRemember that your goal is to answer as QUICKLY AND ACCURATELY as possible', 'block_pause_msg_EN': 'You have finished the last block', 'block_msg_ES': 'Ahora vas a empezar el último bloque\n\nRecuerda que tu objetivo es contestar tan PRECISA Y RÁPIDAMENTE como puedas', 'block_pause_msg_ES': 'Has finalizado el último bloque', 'block_msg_FR': "Vous allez maintenant commencer le dernier bloc\n\nN'oubliez pas que votre objectif est de répondre lePLUS PRÉCISÉMENT ET LE PLUS RAPIDEMENT possible.", 'block_pause_msg_FR': 'Vous avez terminé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
    Routine block_welcome
    Routine countdown
    LoopInitiator test_trial_loop loopType="TrialHandler"
      conditionsFile = $trial_conditions
      loopType = random
      nReps = n_reps
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      conditions:
        [{'hljt_images': 'hljt_images/right_palmar.png', 'hljt_side': 'right', 'hljt_view': 'palmar', 'hljt_angle': 0, 'hljt_direction': 'up', 'hljt_correct_both': 'l', 'hljt_correct_one': 'h'},
        {'hljt_images': 'hljt_images/right_palmar.png', 'hljt_side': 'right', 'hljt_view': 'palmar', 'hljt_angle': 45, 'hljt_direction': 'lateral', 'hljt_correct_both': 'l', 'hljt_correct_one': 'h'},
        {'hljt_images': 'hljt_images/right_palmar.png', 'hljt_side': 'right', 'hljt_view': 'palmar', 'hljt_angle': 90, 'hljt_direction': 'lateral', 'hljt_correct_both': 'l', 'hljt_correct_one': 'h'},
        {'hljt_images': 'hljt_images/right_palmar.png', 'hljt_side': 'right', 'hljt_view': 'palmar', 'hljt_angle': 135, 'hljt_direction': 'lateral', 'hljt_correct_both': 'l', 'hljt_correct_one': 'h'},
        {'hljt_images': 'hljt_images/right_palmar.png', 'hljt_side': 'right', 'hljt_view': 'palmar', 'hljt_angle': 180, 'hljt_direction': 'down', 'hljt_correct_both': 'l', 'hljt_correct_one': 'h'},
        {'hljt_images': 'hljt_images/right_palmar.png', 'hljt_side': 'right', 'hljt_view': 'palmar', 'hljt_angle': 225, 'hljt_direction': 'medial', 'hljt_correct_both': 'l', 'hljt_correct_one': 'h'},
        {'hljt_images': 'hljt_images/right_palmar.png', 'hljt_side': 'right', 'hljt_view': 'palmar', 'hljt_angle': 270, 'hljt_direction': 'medial', 'hljt_correct_both': 'l', 'hljt_correct_one': 'h'}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
      Routine ITI
      Routine test_trial
      Routine test_feedback
    LoopTerminator test_trial_loop
    Routine block_pause
  LoopTerminator test_block
  Routine Goodbye
