PsychoPy2experiment version="2024.2.1post4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': '', 'language': '["English", "Spanish", "French"]'}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['hljt_files/Instructions_both_hands.xlsx', 'hljt_files/Instructions_left_hand.xlsx', 'hljt_files/Instructions_right_hand.xlsx', 'hljt_files/Block_messages.xlsx', 'hljt_files/Stimuli_4angles_all.xlsx', 'hljt_files/Stimuli_4angles_dorsal.xlsx', 'hljt_files/Stimuli_4angles_palmar.xlsx', 'hljt_files/Stimuli_6angles_all.xlsx', 'hljt_files/Stimuli_6angles_dorsal.xlsx', 'hljt_files/Stimuli_6angles_palmar.xlsx', 'hljt_files/Stimuli_8angles_all.xlsx', 'hljt_files/Stimuli_8angles_dorsal.xlsx', 'hljt_files/Stimuli_8angles_palmar.xlsx', 'hljt_files/Stimuli_12angles_all.xlsx', 'hljt_files/Stimuli_12angles_dorsal.xlsx', 'hljt_files/Stimuli_12angles_palmar.xlsx', 'hljt_instr_images/instr_pic1.jpg', 'hljt_instr_images/instr_pic2_both.jpg', 'hljt_instr_images/instr_pic2_left.jpg', 'hljt_instr_images/instr_pic2_right.jpg', 'hljt_instr_images/instr_pic3.jpg', 'hljt_images/left_dorsal.png', 'hljt_images/left_palmar.png', 'hljt_images/right_dorsal.png', 'hljt_images/right_palmar.png']
  Save excel file = True
  Screen = 1
  Show mouse = True
  Units = height
  Use version = 2024.2.0
  Window size (pixels) = [1280, 720]
  expName = HLJT_online
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine Welcome
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    CodeComponent welcome_code
      Code Type = JS
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      Begin JS Routine:
        if ((expInfo["language"] === "English")) {
            welcome_text1.text = "Welcome to the Hand Laterality Judgement Task!\n\nThe purpose is to quantify your ability to make laterality judgements (right/left) on hand images.";
            welcome_text2.text = advance;
        } else {
            if ((expInfo["language"] === "Spanish")) {
                welcome_text1.text = "\u00a1Bienvenid@ a la Tarea de Discriminaci\u00f3n de Lateralidad!\n\nEl objetivo es cuantificar tu capacidad para decidir la lateralidad (derecha/izquierda) de im\u00e1genes de manos.";
                welcome_text2.text = advance;
            } else {
                if ((expInfo["language"] === "French")) {
                    welcome_text1.text = "Bienvenue \u00e0 la T\u00e2che de Jugement de Lat\u00e9ralit\u00e9 de la Main !\n\nLe but est de quantifier votre capacit\u00e9 \u00e0 d\u00e9cider de la lat\u00e9ralit\u00e9 (droite/gauche) d'images de mains.";
                    welcome_text2.text = advance;
                }
            }
        }
    TextComponent welcome_text1
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent welcome_text2
      letterHeight = 0.045
      pos = (0, -0.45)
      startVal [time (s)] = 0.0
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    KeyboardComponent welcome_adv_key
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      store = nothing
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  Routine Goodbye
    RoutineSettingsComponent Goodbye
      stopVal [duration (s)] = 3
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    CodeComponent code_exit
      Code Type = JS
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      Begin JS Routine:
        if ((expInfo["language"] === "English")) {
            bye_text.text = "This is the end of the experiment\n\nThanks for participating!\n\nWait 3 seconds to exit";
        } else {
            if ((expInfo["language"] === "Spanish")) {
                bye_text.text = "Este es el final del experimento\n\n\u00a1Gracias por participar!\n\nEspera 3 segundos para salir";
            } else {
                if ((expInfo["language"] === "French")) {
                    bye_text.text = "Ceci est la fin de l'exp\u00e9rience\n\nMerci d'avoir particip\u00e9 !\n\nAttendez 3 secondes pour quitter";
                }
            }
        }
    TextComponent bye_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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    KeyboardComponent Exit
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1
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  Routine ITI
    RoutineSettingsComponent ITI
      saveStartStop = False
      stopVal [duration (s)] = $iti
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    CodeComponent code_iti
      Code Type = JS
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      Begin JS Routine:
        psychoJS.experiment.addData("ITI", iti);
    PolygonComponent pract_fix_cross_2
      fillColor = white
      shape = cross
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    PolygonComponent box_left
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (-0.1, -0.4)
      shape = rectangle
      size = (0.07, 0.07)
      startVal [time (s)] = 0.0
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    PolygonComponent box_right
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (0.1, -0.4)
      shape = rectangle
      size = (0.07, 0.07)
      startVal [time (s)] = 0.0
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  Routine language_settings
    RoutineSettingsComponent language_settings
      saveStartStop = False
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    CodeComponent language_settings_code
      Code Type = Auto->JS
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      Begin Experiment:
        # allow the user to select language in every run of the experiment
        if expInfo["language"] == "English":
            advance = "Press SPACE to continue"
            pract_welc_msg = "You are going to start the practice block\n\n" + advance
        elif expInfo["language"] == "Spanish":
            advance = "Presiona ESPACIO para continuar"
            pract_welc_msg = "Vas a empezar el bloque de práctica\n\n" + advance
        elif expInfo["language"] == "French":
            advance = "Appuyez sur ESPACE pour continuer"
            pract_welc_msg = "Vous allez commencer le bloc de pratique\n\n" + advance
  Routine instructions
    RoutineSettingsComponent instructions
      saveStartStop = False
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    CodeComponent hljt_instr_code
      Code Type = Auto->JS
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      Begin Routine:
        if expInfo["language"] == "English":
            hljt_instr_text.text = instr_msg_en
            hljt_instr_image.image = instr_pics
            hljt_instr_adv_text.text = advance
        elif expInfo["language"] == "Spanish":
            hljt_instr_text.text = instr_msg_es
            hljt_instr_image.image = instr_pics
            hljt_instr_adv_text.text = advance
        elif expInfo["language"] == "French":
            hljt_instr_text.text = instr_msg_fr
            hljt_instr_image.image = instr_pics
            hljt_instr_adv_text.text = advance

        # set position of text for last screen
        if feedback_time == 0 and instructions_loop.thisN == 2:
            continueRoutine = False
    TextComponent hljt_instr_text
      letterHeight = 0.03
      pos = (-0.35, 0)
      startVal [time (s)] = 0.0
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    ImageComponent hljt_instr_image
      pos = (0.5, 0)
      size [set every repeat] = [images_sizeW, images_sizeH]
      startVal [time (s)] = 0.0
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    TextComponent hljt_instr_adv_text
      letterHeight = 0.045
      pos = (0, -0.45)
      startVal [time (s)] = 0.0
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    KeyboardComponent hljt_instr_adv_key
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.2
      store = nothing
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  Routine pract_welcome
    RoutineSettingsComponent pract_welcome
      saveStartStop = False
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    TextComponent pract_welc_text
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $pract_welc_msg
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    KeyboardComponent pract_welc_adv
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
      store = nothing
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  Routine countdown
    RoutineSettingsComponent countdown
      saveStartStop = False
      stopVal [duration (s)] = 3
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    TextComponent countdown_3
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.9
      text = 3
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    TextComponent countdown_2
      letterHeight = 0.07
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.9
      text = 2
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    TextComponent countdown_1
      letterHeight = 0.07
      startVal [time (s)] = 2
      stopVal [duration (s)] = 0.9
      text = 1
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    KeyboardComponent hljt_go_to_experiment_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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  Routine experiment_settings
    RoutineSettingsComponent experiment_settings
      saveStartStop = False
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    CodeComponent response_mode
      Code Type = Auto->JS
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      Begin Experiment:
        # choose file based on response mode. Comment out to select
        use_i = "hljt_files/Instructions_both_hands.xlsx"
        #use_i = "hljt_files/Instructions_right_hand.xlsx"
        #use_i = "hljt_files/Instructions_left_hand.xlsx"

        # define variables to use for key presses
        allowed_keys = ""
        correct_keys = ""

        # add to output
        thisExp.addData("instructions_file", use_i)
    CodeComponent number_of_reps
      Code Type = Auto->JS
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      Begin Experiment:
        # number of stimuli
        # n_reps sets the number of repetitions per block
        # there are four blocks
        # therefore if n_reps = 1, total = 4, etc.

        # set to 12
        n_reps = 3

        # add to output
        thisExp.addData("reps_per_block", n_reps)
    CodeComponent feedback
      Code Type = Auto->JS
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      Begin Experiment:
        # define feedback time, in seconds
        # if no feedback, set to 0
        feedback_time = 0.3

        # this only applies to test blocks
        # to change it in practice block, go to routine settings

        # add to output
        thisExp.addData("feedback_time", feedback_time)
    CodeComponent practice_block_2
      Code Type = Auto->JS
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      Begin Experiment:
        # set to 1 for including a practice block, 0 for skipping
        pract_block = 1

        # add to output
        thisExp.addData("practice_block", pract_block)
    CodeComponent number_of_angles_hand_view
      Code Type = Auto->JS
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      Begin Experiment:
        # choose conditions file
        # change "all" for "palmar" or "dorsal" to subset
        conditions_file = "hljt_files/Stimuli_8angles_all.xlsx"

        # add to output
        thisExp.addData("conditions_file", conditions_file)
    CodeComponent inter_trial_interval
      Code Type = Auto->JS
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      Begin Experiment:
        # time in seconds
        iti = 0.8
  Routine block_welcome
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    CodeComponent test_code_2
      Code Type = Auto->JS
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      Begin Routine:
        if expInfo["language"] == "English":
            hljt_test_text.text = test_msg_en
            hljt_test_adv_text.text = advance
        elif expInfo["language"] == "Spanish":
            hljt_test_text.text = test_msg_es
            hljt_test_adv_text.text = advance
        elif expInfo["language"] == "French":
            hljt_test_text.text = test_msg_fr
            hljt_test_adv_text.text = advance
    TextComponent hljt_test_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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    TextComponent hljt_test_adv_text
      letterHeight = 0.045
      pos = (0, -0.45)
      startVal [time (s)] = 5
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    KeyboardComponent hljt_test_adv_key
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 5
      store = nothing
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  Routine test_trial
    RoutineSettingsComponent test_trial
      saveStartStop = False
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    CodeComponent test_code
      Code Type = Auto->JS
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      Begin Routine:
        fill_left = ""
        fill_right = ""
        black = [-1, -1, -1]
        fill_left = black
        fill_right = black

        # define corrct keys and allowed keys
        if use_i == "hljt_files/Instructions_both_hands.xlsx":
            allowed_keys = ['s', 'l']
            correct_keys = hljt_correct_both
        else:
            allowed_keys = ['g', 'h']
            correct_keys = hljt_correct_one
      Each Frame:
        if test_hljt_response.keys in allowed_keys:
            continueRoutine = False
        else:
            continueRoutine = True
    PolygonComponent test_square
      fillColor = white
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0
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    ImageComponent test_hljt_image
      color = 1.0000, 1.0000, 1.0000
      image [set every repeat] = $hljt_images
      ori [set every repeat] = hljt_angle
      size = (0.45, 0.45)
      startVal [time (s)] = 0
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    KeyboardComponent test_hljt_response
      allowedKeys = 's', 'l', 'g', 'h'
      correctAns = $correct_keys
      forceEndRoutine = False
      startVal [time (s)] = 0
      storeCorrect = True
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    PolygonComponent square_left_3
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (-0.1, -0.4)
      shape = rectangle
      size = (0.07, 0.07)
      startVal [time (s)] = 0.0
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    PolygonComponent square_right_3
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (0.1, -0.4)
      shape = rectangle
      size = (0.07, 0.07)
      startVal [time (s)] = 0.0
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  Routine test_feedback
    RoutineSettingsComponent test_feedback
      saveStartStop = False
      stopVal [duration (s)] = $feedback_time
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    CodeComponent test_feedback_code
      Code Type = Auto->JS
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      Begin Routine:
        black = [-1, -1, -1]
        green = [-1, 0.0039, -1]
        red = [1, -1, -1]

        # If response is correct:
        if test_hljt_response.corr == 1:
            if correct_keys == hljt_correct_both:
                if test_hljt_response.keys == "s":
                    fill_left = green
                    fill_right = black
                elif test_hljt_response.keys == "l":
                    fill_left = black
                    fill_right = green
            elif correct_keys == hljt_correct_one:
                if test_hljt_response.keys == "g":
                    fill_left = green
                    fill_right = black
                elif test_hljt_response.keys == "h":
                    fill_left = black
                    fill_right = green

        #If response is incorrect:
        if test_hljt_response.corr == 0:
            if correct_keys == hljt_correct_both:
                if test_hljt_response.keys == "s":
                    fill_left = red
                    fill_right = black
                elif test_hljt_response.keys == "l":
                    fill_left = black
                    fill_right = red
            elif correct_keys == hljt_correct_one:
                if test_hljt_response.keys == "g":
                    fill_left = red
                    fill_right = black
                elif test_hljt_response.keys == "h":
                    fill_left = black
                    fill_right = red
    PolygonComponent test_square_2
      fillColor = white
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0
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    ImageComponent test_hljt_image_2
      color = 1.0000, 1.0000, 1.0000
      image [set every repeat] = $hljt_images
      ori [set every repeat] = hljt_angle
      size = (0.45, 0.45)
      startVal [time (s)] = 0
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    PolygonComponent square_left_4
      fillColor [set every repeat] = $fill_left
      lineColor [set every repeat] = $fill_left
      pos = (-0.1, -0.4)
      shape = rectangle
      size = (0.07, 0.07)
      startVal [time (s)] = 0.0
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    PolygonComponent square_right_4
      fillColor [set every repeat] = $fill_right
      lineColor [set every repeat] = $fill_right
      pos = (0.1, -0.4)
      shape = rectangle
      size = (0.07, 0.07)
      startVal [time (s)] = 0.0
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  Routine block_pause
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    CodeComponent hljt_block_pause_code
      Code Type = Auto->JS
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      Begin Routine:
        if expInfo["language"] == "English":
            hljt_block_pause_text.text = block_pause_msg_en
            hljt_block_adv_text.text = advance
        elif expInfo["language"] == "Spanish":
            hljt_block_pause_text.text = block_pause_msg_es
            hljt_block_adv_text.text = advance
        elif expInfo["language"] == "French":
            hljt_block_pause_text.text = block_pause_msg_fr
            hljt_block_adv_text.text = advance
    TextComponent hljt_block_pause_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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    TextComponent hljt_block_adv_text
      letterHeight = 0.045
      pos = (0, -0.45)
      startVal [time (s)] = 5
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    KeyboardComponent hljt_block_adv_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 5
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  Routine pract_feedback
    RoutineSettingsComponent pract_feedback
      saveStartStop = False
      stopVal [duration (s)] = 0.3
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    CodeComponent pract_feedback_code
      Code Type = Auto->JS
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      Begin Routine:
        feedback_time = 0.3
        #feedback_time = float(expInfo["feedback_time"])

        black = [-1, -1, -1]
        green = [-1, 0.0039, -1]
        red = [1, -1, -1]

        # If response is correct:
        if pract_hljt_response.corr == 1:
            if correct_keys == hljt_correct_both:
                if pract_hljt_response.keys == "s":
                    fill_left = green
                    fill_right = black
                elif pract_hljt_response.keys == "l":
                    fill_left = black
                    fill_right = green
            elif correct_keys == hljt_correct_one:
                if pract_hljt_response.keys == "g":
                    fill_left = green
                    fill_right = black
                elif pract_hljt_response.keys == "h":
                    fill_left = black
                    fill_right = green

        #If response is incorrect:
        if pract_hljt_response.corr == 0:
            if correct_keys == hljt_correct_both:
                if pract_hljt_response.keys == "s":
                    fill_left = red
                    fill_right = black
                elif pract_hljt_response.keys == "l":
                    fill_left = black
                    fill_right = red
            elif correct_keys == hljt_correct_one:
                if pract_hljt_response.keys == "g":
                    fill_left = red
                    fill_right = black
                elif pract_hljt_response.keys == "h":
                    fill_left = black
                    fill_right = red
    PolygonComponent pract_square_2
      fillColor = white
      lineColor = 1.0000, 1.0000, 1.0000
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0
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    ImageComponent pract_hljt_image_2
      color = 1.0000, 1.0000, 1.0000
      image [set every repeat] = $hljt_images
      ori [set every repeat] = hljt_angle
      size = (0.45, 0.45)
      startVal [time (s)] = 0
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    PolygonComponent square_left_2
      fillColor [set every repeat] = $fill_left
      lineColor [set every repeat] = $fill_left
      pos = (-0.1, -0.4)
      shape = rectangle
      size = (0.07, 0.07)
      startVal [time (s)] = 0.0
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    PolygonComponent square_right_2
      fillColor [set every repeat] = $fill_right
      lineColor [set every repeat] = $fill_right
      pos = (0.1, -0.4)
      shape = rectangle
      size = (0.07, 0.07)
      startVal [time (s)] = 0.0
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  Routine pract_trial
    RoutineSettingsComponent pract_trial
      saveStartStop = False
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    CodeComponent pract_code
      Code Type = Auto->JS
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      Begin Routine:
        # define corrct keys and allowed keys
        if use_i == "hljt_files/Instructions_both_hands.xlsx":
            allowed_keys = ['s', 'l']
            correct_keys = hljt_correct_both
        else:
            allowed_keys = ['g', 'h']
            correct_keys = hljt_correct_one
      Each Frame:
        if pract_hljt_response.keys in allowed_keys:
            continueRoutine = False
        else:
            continueRoutine = True
    PolygonComponent pract_square
      fillColor = white
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0
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    ImageComponent pract_hljt_image
      color = 1.0000, 1.0000, 1.0000
      image [set every repeat] = $hljt_images
      ori [set every repeat] = hljt_angle
      size = (0.45, 0.45)
      startVal [time (s)] = 0
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    KeyboardComponent pract_hljt_response
      allowedKeys = 's', 'l', 'g', 'h'
      correctAns = $correct_keys
      forceEndRoutine = False
      startVal [time (s)] = 0
      storeCorrect = True
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    PolygonComponent square_left
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (-0.1, -0.4)
      shape = rectangle
      size = (0.07, 0.07)
      startVal [time (s)] = 0.0
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    PolygonComponent square_right
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (0.1, -0.4)
      shape = rectangle
      size = (0.07, 0.07)
      startVal [time (s)] = 0.0
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Flow
  Routine language_settings
  Routine experiment_settings
  Routine Welcome
  LoopInitiator instructions_loop loopType="TrialHandler"
    conditionsFile = $use_i
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine instructions
  LoopTerminator instructions_loop
  LoopInitiator practice_block loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = pract_block
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    Routine pract_welcome
    Routine countdown
    LoopInitiator practice_trials loopType="TrialHandler"
      conditionsFile = $conditions_file
      loopType = random
      nReps = pract_block
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      Routine ITI
      Routine pract_trial
      Routine pract_feedback
    LoopTerminator practice_trials
  LoopTerminator practice_block
  LoopInitiator test_blocks loopType="TrialHandler"
    conditionsFile = hljt_files/Block_messages.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'test_msg_en': 'Now you are going to do the test blocks\n\nThere are 4 blocks, with a break between them', 'block_pause_msg_en': 'You have finished the first block', 'test_msg_es': 'Ahora vas a realizar los bloques de prueba\n\nHay 4 bloques, con un descanso entre ellos', 'block_pause_msg_es': 'Has finalizado el primer bloque', 'test_msg_fr': 'Vous allez maintenant faire les blocs de test\n\nIl y a 4 blocs, avec une pause entre les deux', 'block_pause_msg_fr': 'Vous avez terminé le premier bloc'},
      {'test_msg_en': 'Now you are going to start the second block\n\nRemember that your goal is to answer as QUICKLY AND ACCURATELY as possible', 'block_pause_msg_en': 'You have finished the second block', 'test_msg_es': 'Ahora vas a empezar el segundo bloque\n\nRecuerda que tu objetivo es contestar tan PRECISA Y RÁPIDAMENTE como puedas', 'block_pause_msg_es': 'Has finalizado el segundo bloque', 'test_msg_fr': "Vous allez maintenant commencer le deuxième bloc\n\nN'oubliez pas que votre objectif est de répondre le PLUS PRÉCISÉMENT ET LE PLUS RAPIDEMENT possible.", 'block_pause_msg_fr': 'Vous avez te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,
      {'test_msg_en': 'Now you are going to start the third block\n\nRemember that your goal is to answer as QUICKLY AND ACCURATELY as possible', 'block_pause_msg_en': 'You have finished the third block', 'test_msg_es': 'Ahora vas a empezar el tercer bloque\n\nRecuerda que tu objetivo es contestar tan PRECISA Y RÁPIDAMENTE como puedas', 'block_pause_msg_es': 'Has finalizado el tercer bloque', 'test_msg_fr': "Vous  allez maintenant commencer le troisième bloc\n\nN'oubliez pas que votre objectif est de répondre le PLUS PRÉCISÉMENT ET LE PLUS RAPIDEMENT possible.", 'block_pause_msg_fr': 'Vous avez term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,
      {'test_msg_en': 'Now you are going to start the last block\n\nRemember that your goal is to answer as QUICKLY AND ACCURATELY as possible', 'block_pause_msg_en': 'You have finished the last block', 'test_msg_es': 'Ahora vas a empezar el último bloque\n\nRecuerda que tu objetivo es contestar tan PRECISA Y RÁPIDAMENTE como puedas', 'block_pause_msg_es': 'Has finalizado el último bloque', 'test_msg_fr': "Vous allez maintenant commencer le dernier bloc\n\nN'oubliez pas que votre objectif est de répondre lePLUS PRÉCISÉMENT ET LE PLUS RAPIDEMENT possible.", 'block_pause_msg_fr': 'Vous avez terminé le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
    Routine block_welcome
    Routine countdown
    LoopInitiator test_trials loopType="TrialHandler"
      conditionsFile = $conditions_file
      loopType = random
      nReps = n_reps
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      Routine ITI
      Routine test_trial
      Routine test_feedback
    LoopTerminator test_trials
    Routine block_pause
  LoopTerminator test_blocks
  Routine Goodbye
