---
API: 3
OpenSesame: 4.1.9
Platform: nt
---
set width 1024
set title HLJT_online
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend osweb
set round_decimals 2
set mouse_backend osweb
set keyboard_backend osweb
set jatos_uuid "4d026e20-a8aa-5304-9d16-99603e8ce62d"
set height 768
set fullscreen no
set form_clicks no
set foreground black
set font_underline no
set font_size 18
set font_italic False
set font_family mono
set font_bold False
set experiment_path "C:\\Users\\morenoverdu\\OneDrive - UCL\\BAS-Lab\\Github repositories\\HLJT\\HLJT_online_OpenSesame"
set disable_garbage_collection False
set description "The main experiment item"
set color_backend osweb
set clock_backend osweb
set canvas_backend osweb
set background white

define inline_javascript ITI
	set description "Fixation cross + response boxes"
	___run__
	// ITEM: "ITI" (Run phase) - fixation cross + response boxes
	var c = Canvas({background_color: white})
	c.fixdot({color: black, style: "large-cross"})
	draw_boxes(c, black, black)
	c.show()
	__end__
	___prepare__
	// ITEM: "ITI" (Prepare phase)
	// Computed here, not in Run: within a sequence, ALL children's Prepare
	// phases run (in order) before ANY of their Run phases -- so "iti_wait"
	// (the very next item) has its own Prepare phase evaluate "{iti_ms}"
	// BEFORE "ITI"'s Run phase would have set it, causing a
	// "iti_ms is not defined" error. Computing it in Prepare instead makes it
	// available by the time iti_wait's own Prepare phase runs.
	current_iti = next_iti()
	iti_ms = Math.round(current_iti * 1000)
	__end__

define sequence ITI_seq
	set flush_keyboard yes
	set description "Inter-trial interval"
	run ITI True
	run iti_wait True

define form_multiple_choice age_form
	set timeout infinite
	set spacing 10
	set question ""
	__options__
	1
	2
	3
	4
	5
	6
	7
	8
	9
	10
	11
	12
	13
	14
	15
	16
	17
	18
	19
	20
	21
	22
	23
	24
	25
	26
	27
	28
	29
	30
	31
	32
	33
	34
	35
	36
	37
	38
	39
	40
	41
	42
	43
	44
	45
	46
	47
	48
	49
	50
	51
	52
	53
	54
	55
	56
	57
	58
	59
	60
	61
	62
	63
	64
	65
	66
	67
	68
	69
	70
	71
	72
	73
	74
	75
	76
	77
	78
	79
	80
	81
	82
	83
	84
	85
	86
	87
	88
	89
	90
	91
	92
	93
	94
	95
	96
	97
	98
	99
	__end__
	set margins "50;50;50;50"
	set form_var age_response
	set form_title "{age_msg}"
	set description "Age question"
	set button_text Ok
	set allow_multiple no
	set advance_immediately yes
	set _theme gray

define form_text_input age_form_text_input
	set timeout infinite
	set spacing 10
	set rows "1;1;6"
	set only_render no
	set margins "50;50;50;50"
	set form_var age_response
	set form_title "{age_msg}"
	set form_question "{age_question_msg}"
	set description "A simple text input form"
	set cols 1
	set _theme gray
	widget 0 0 1 1 label text="{form_title}"
	widget 0 1 1 1 label center=no text="{form_question}"
	widget 0 2 1 1 text_input focus=yes return_accepts=yes stub="" var="{form_var}"


define inline_javascript block_end
	set description "End-of-block message"
	___run__
	// ITEM: "block_end" (Run phase)
	var end_message = (this_is_practice == 1) ? msg["practice_end_msg"] : msg["block_end_msg"]
	var c = Canvas({background_color: white})
	draw_paragraphs(c, end_message, 0, -200, SCREEN_W - 200, {color: black, font_size: 24})
	c.text({text: msg["adv_msg"], x: 0, y: 330, color: black, font_size: 20})
	c.show()
	__end__
	set _prepare ""

define keyboard_response block_end_kb
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Waits for space"
	set allowed_responses space

define sequence block_end_seq
	set flush_keyboard yes
	set description "End-of-block message"
	run block_end True
	run block_end_kb True

define sequence block_sequence
	set flush_keyboard yes
	set description "One block: intro, countdown, trials, block end"
	run block_start_seq True
	run countdown_seq True
	run trials_loop True
	run block_end_seq True

define inline_javascript block_start
	set description "Block intro + builds this block's trial list"
	___run__
	// ITEM: "block_start" (Run phase)
	var header = this_block_number + " " + msg["out_of_msg"] + " " + total_blocks + " " + msg["blocks_msg"]
	var block_message = (this_is_practice == 1) ? msg["practice_block_msg"] : msg["task_block_msg"]
	var c = Canvas({background_color: white})
	draw_paragraphs(c, header + "\n" + block_message, 0, -200, SCREEN_W - 200, {color: black, font_size: 24})
	c.text({text: msg["adv_msg"], x: 0, y: 330, color: black, font_size: 20})
	c.show()
	__end__
	___prepare__
	// ITEM: "block_start" (Prepare phase)
	// Reads this block's row from the plain JS array built by "setup" (no
	// items["..."].dm -- that API is Python-only and throws in JS), builds
	// this block's trial list into another plain array + running index, and
	// updates the "fb" flag exactly like the local version's block_start.
	this_block_number = blocks_rows[block_idx].block_number
	this_is_practice = blocks_rows[block_idx].is_practice
	if (!this_is_practice && !task_fb) { fb = false }
	
	trial_list = build_block_trial_list(this_is_practice == 1)
	trial_count = trial_list.length
	trial_idx = 0
	block_idx = block_idx + 1
	__end__

define keyboard_response block_start_kb
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Waits for space"
	set allowed_responses space

define sequence block_start_seq
	set flush_keyboard yes
	set description "Block intro message"
	run block_start True
	run block_start_kb True

define loop blocks_loop
	set source_file ""
	set source table
	set repeat 10
	set order sequential
	set description "Loop over practice + test blocks (array built by setup); repeat is a safe upper bound, break_if stops it at total_blocks"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if "block_idx >= total_blocks"
	setcycle 0 empty_column ""
	run block_sequence

define inline_javascript bye
	set description "Goodbye screen"
	___run__
	// ITEM: "bye" - goodbye screen, shown for 3 seconds
	var c = Canvas({background_color: white})
	draw_paragraphs(c, msg["bye_msg"], 0, -60, SCREEN_W - 160, {color: black, font_size: 26})
	c.show()
	__end__
	set _prepare ""

define sequence bye_seq
	set flush_keyboard yes
	set description "Goodbye screen"
	run bye True
	run bye_wait True

define keyboard_response bye_wait
	set timeout 3000
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Holds the goodbye screen for 3s"

define inline_javascript countdown_draw1
	set description "Countdown: 1"
	___run__
	// ITEM: "countdown" step 3/3
	var c = Canvas({background_color: white})
	c.text({text: "1", color: black, font_size: 72})
	c.show()
	__end__
	set _prepare ""

define inline_javascript countdown_draw2
	set description "Countdown: 2"
	___run__
	// ITEM: "countdown" step 2/3
	var c = Canvas({background_color: white})
	c.text({text: "2", color: black, font_size: 72})
	c.show()
	__end__
	set _prepare ""

define inline_javascript countdown_draw3
	set description "Countdown: 3"
	___run__
	// ITEM: "countdown" step 1/3
	var c = Canvas({background_color: white})
	c.text({text: "3", color: black, font_size: 72})
	c.show()
	__end__
	set _prepare ""

define sequence countdown_seq
	set flush_keyboard yes
	set description "3-2-1 countdown before a block's trials"
	run countdown_draw3 True
	run countdown_wait3 True
	run countdown_draw2 True
	run countdown_wait2 True
	run countdown_draw1 True
	run countdown_wait1 True

define keyboard_response countdown_wait1
	set timeout 1000
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Holds '1' on screen for 1s"

define keyboard_response countdown_wait2
	set timeout 1000
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Holds '2' on screen for 1s"

define keyboard_response countdown_wait3
	set timeout 1000
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Holds '3' on screen for 1s"

define sequence demographics_seq
	set flush_keyboard yes
	set description "Age / gender / handedness form"
	run age_form False
	run age_form_text_input True
	run gender_form True
	run hand_form True

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run settings True
	run language_form True
	run setup True
	run welcome_seq True
	run demographics_seq True
	run instructions_loop True
	run blocks_loop True
	run bye_seq True

define inline_javascript feedback
	set description "Colored feedback boxes"
	___run__
	// ITEM: "feedback" (Run phase) - colored response boxes
	var sc_fb = scale_for(stim_image, STIM_TARGET, STIM_TARGET)
	var left, right
	if (fb) {
	    if (last_correct == 1) {
	        if (last_key == "s" || last_key == "g") { left = green; right = black } else { left = black; right = green }
	    } else {
	        if (last_key == "s" || last_key == "g") { left = red; right = black } else { left = black; right = red }
	    }
	} else {
	    if (last_key == "s" || last_key == "g") { left = white; right = black } else { left = black; right = white }
	}
	var c = Canvas({background_color: white})
	c.image({fname: stim_image, x: 0, y: 0, scale: sc_fb, rotation: parseFloat(stim_angle)})
	draw_boxes(c, left, right)
	c.show()
	__end__
	___prepare__
	// ITEM: "feedback" (Prepare phase)
	// Computed here, not in Run: see the identical note on "ITI"'s Prepare
	// phase above -- "feedback_wait" (the next item) needs feedback_ms
	// available already at ITS OWN Prepare phase, which runs right after
	// this one, before "feedback"'s own Run phase would have set it.
	feedback_ms = Math.round(feedback_time * 1000)
	__end__

define sequence feedback_seq
	set flush_keyboard yes
	set description "Feedback screen"
	run feedback True
	run feedback_wait True

define keyboard_response feedback_wait
	set timeout "{feedback_ms}"
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Holds the feedback screen"

define form_multiple_choice gender_form
	set timeout infinite
	set spacing 10
	set question ""
	__options__
	{f_msg}
	{m_msg}
	{tg_msg}
	{nb_msg}
	{o_msg}
	{pns_msg}
	__end__
	set margins "50;50;50;50"
	set form_var gender_response
	set form_title "{gender_msg}"
	set description "Gender question"
	set button_text Ok
	set allow_multiple no
	set advance_immediately no
	set _theme gray

define form_multiple_choice hand_form
	set timeout infinite
	set spacing 10
	set question ""
	__options__
	{left_msg}
	{ambi_msg}
	{right_msg}
	__end__
	set margins "50;50;50;50"
	set form_var hand_response
	set form_title "{laterality_msg}"
	set description "Handedness question"
	set button_text Ok
	set allow_multiple no
	set advance_immediately no
	set _theme gray

define inline_javascript instructions_draw
	set description "One instructions screen"
	___run__
	// ITEM: "instructions" (Run phase) - one screen per instructions_loop cycle
	// Stacked layout (image on top, full-width paragraph text below): the
	// instructions text is several long paragraphs, which needs the full
	// screen width to wrap into a reasonable number of lines -- a narrow
	// side-by-side column (text left / image right) made the text block far
	// taller than the screen, so it looked cut off.
	var row = cur_instructions_row
	var c = Canvas({background_color: white})
	var fimg = basename(row.inst_pics)
	var sc_inst = scale_for(fimg, 380, 260)
	c.image({fname: fimg, x: 0, y: 150, scale: sc_inst})
	draw_paragraphs(c, row.inst_msg, 0, -250, SCREEN_W - 200, {color: black, font_size: 18})
	c.text({text: msg["adv_msg"], x: 0, y: 340, color: black, font_size: 20})
	c.show()
	__end__
	___prepare__
	// ITEM: "instructions" (Prepare phase) - always runs
	var cur_idx = instructions_idx
	cur_instructions_row = instructions_rows[cur_idx]
	skip_this = cur_instructions_row.skip_this
	instructions_idx = instructions_idx + 1
	__end__

define keyboard_response instructions_kb
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Waits for space"
	set allowed_responses space

define loop instructions_loop
	set source_file ""
	set source table
	set repeat 3
	set order sequential
	set description "Loop over the instructions screens"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if False
	setcycle 0 empty_column ""
	run instructions_seq

define sequence instructions_seq
	set flush_keyboard yes
	set description "One instructions_loop cycle"
	run instructions_draw "skip_this != 1"
	run instructions_kb "skip_this != 1"

define keyboard_response iti_wait
	set timeout "{iti_ms}"
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Waits out the inter-trial interval"

define form_multiple_choice language_form
	set timeout infinite
	set spacing 10
	set question ""
	__options__
	English
	Spanish
	French
	German
	__end__
	set margins "50;50;50;50"
	set form_var language
	set form_title "Select language"
	set description "Language selection"
	set button_text Ok
	set allow_multiple no
	set advance_immediately no
	set _theme gray

define logger logger
	set description "Logs experimental data (explicit, matching a confirmed-working reference)"
	set auto_log no
	log participant
	log session
	log language
	log lang_code
	log response_mode
	log practice_block
	log n_angles
	log hand_views
	log n_reps
	log feedback
	log age_response
	log gender_response
	log hand_response
	log this_block_number
	log this_is_practice
	log trial_idx
	log hljt_images
	log hljt_side
	log hljt_view
	log hljt_angle
	log hljt_direction
	log hljt_correct_both
	log hljt_correct_one
	log correct_key_value
	log current_iti
	log last_key
	log last_rt
	log last_correct

define inline_javascript settings
	set description "Experimenter-editable settings"
	set _run ""
	___prepare__
	// ITEM: "settings" (Prepare phase)
	// Edit the values below to configure this run of the experiment.
	// Language is NOT set here -- it is chosen on-screen via "language_form".
	participant = "001"
	session = "001"
	response_mode = "Both hands"
	practice_block = "Yes"
	n_angles = "8 (increments of 45º)"
	hand_views = "Palmar and Dorsal"
	n_reps = "8"
	feedback = "0.3" // a number or "No feedback"
	practice_n_trials = "5"
	test_n_trials = "all"
	__end__

define inline_javascript setup
	set description "Derives variables, loads csv files via csv-parse, defines helpers"
	___run__
	// ITEM: "setup" (Run phase)
	// Loads the language-dependent message/instructions text. This has to
	// live in Run, not Prepare: OpenSesame runs the Prepare phase of every
	// item in the "experiment" sequence, in order, before running the Run
	// phase of any of them -- so at Prepare time, "language_form" (which
	// runs before "setup") has not received an answer yet, and `language`
	// would still be undefined.
	var lang_loc_rows = readPoolCsv("Language_localiser.csv")
	lang_code = "EN"
	for (var i = 0; i < lang_loc_rows.length; i++) {
	    if (lang_loc_rows[i].language == language) { lang_code = lang_loc_rows[i].ISO_code; break }
	}
	
	// Generic message flattening: every row of Messages.csv becomes both a
	// msg["..."] lookup AND a flat experiment variable (via the `vars` proxy),
	// so any message key can be substituted into a property with "{key}"
	// (e.g. a form_title) without hand-picking which keys need it.
	var messages_rows = readPoolCsv("Messages.csv")
	msg = {}
	for (var i = 0; i < messages_rows.length; i++) {
	    var mkey = messages_rows[i].message
	    var mval = messages_rows[i][lang_code]
	    msg[mkey] = mval
	    vars[mkey] = mval
	}
	
	var instructions_rows = readPoolCsv(use_i)
	for (var i = 0; i < instructions_rows.length; i++) {
	    var row = instructions_rows[i]
	    row.inst_msg = row["inst_msg_" + lang_code] || row.inst_msg_EN
	    row.skip_this = (i == 2 && !task_fb) ? 1 : 0
	}
	instructions_idx = 0
	
	var blocks_rows = []
	for (var i = 1; i <= total_blocks; i++) {
	    blocks_rows.push({block_number: i, is_practice: (i == 1 && pract_block == 1) ? 1 : 0})
	}
	block_idx = 0
	__end__
	___prepare__
	// ITEM: "setup" (Prepare phase)
	// Derives everything from "settings", using csv-parse to read the pool
	// csv files (OSWeb has no xlsx reader). Defines helpers used everywhere
	// else. Does NOT touch anything that depends on `language` (that only
	// exists once "language_form" has run -- see the Run phase below).
	
	SCREEN_W = width
	SCREEN_H = height
	
	function readPoolCsv(name) {
	    return csvParse(pool[name].data, {columns: true})
	}
	
	function basename(p) {
	    // "hljt_images/left_dorsal.png" -> "left_dorsal.png" (pool is flat)
	    var parts = String(p).split("/")
	    return parts[parts.length - 1]
	}
	
	// --- response mode -> instructions file + response keys ---
	if (response_mode == "Both hands") {
	    use_i = "Instructions_both_hands.csv"
	    resp_keys = "s;l"
	    correct_col = "hljt_correct_both"
	} else if (response_mode == "Right hand") {
	    use_i = "Instructions_right_hand.csv"
	    resp_keys = "g;h"
	    correct_col = "hljt_correct_one"
	} else if (response_mode == "Left hand") {
	    use_i = "Instructions_left_hand.csv"
	    resp_keys = "g;h"
	    correct_col = "hljt_correct_one"
	}
	
	pract_block = (practice_block == "Yes") ? 1 : 0
	
	main_blocks = 0
	reps_per_block = 2
	if (n_reps == "4") { main_blocks = 2 }
	else if (n_reps == "8") { main_blocks = 4 }
	else if (n_reps == "12") { main_blocks = 6 }
	total_blocks = main_blocks + pract_block
	
	feedback_time = feedback
	task_fb = true
	if (feedback_time == "No feedback") {
	    feedback_time = 0.3
	    task_fb = false
	} else {
	    feedback_time = parseFloat(feedback_time)
	}
	fb = true
	
	black = "#000000"
	green = "#008000"
	red = "#FF0000"
	white = "#FFFFFF"
	
	var conditions_file = ""
	if (n_angles.indexOf("4") == 0) { conditions_file = "Stimuli_4angles.csv" }
	else if (n_angles.indexOf("6") == 0) { conditions_file = "Stimuli_6angles.csv" }
	else if (n_angles.indexOf("8") == 0) { conditions_file = "Stimuli_8angles.csv" }
	else if (n_angles.indexOf("12") == 0) { conditions_file = "Stimuli_12angles.csv" }
	
	var all_stimuli = readPoolCsv(conditions_file)
	
	if (hand_views == "Palmar") {
	    filtered_stimuli = all_stimuli.filter(function (s) { return s.hljt_view == "palmar" })
	} else if (hand_views == "Dorsal") {
	    filtered_stimuli = all_stimuli.filter(function (s) { return s.hljt_view == "dorsal" })
	} else {
	    filtered_stimuli = all_stimuli.slice()
	}
	
	// --- inter-trial-interval list (same algorithm as the local version) ---
	var n_trials_iti = 600
	var block_size = 64
	iti_list = []
	for (var b = 0; b < Math.floor(n_trials_iti / block_size); b++) {
	    var n_high = Math.floor(block_size * 0.5)
	    var n_low = block_size - n_high
	    var high_itis = []
	    for (var i = 0; i < n_high; i++) { high_itis.push(0.75 + Math.random() * 0.10) }
	    var low_itis = []
	    while (low_itis.length < n_low) {
	        var v = 0.6 + Math.random() * 0.4
	        if (!(v >= 0.75 && v <= 0.85)) { low_itis.push(v) }
	    }
	    var block_itis = high_itis.concat(low_itis)
	    // Fisher-Yates shuffle
	    for (var i = block_itis.length - 1; i > 0; i--) {
	        var j = Math.floor(Math.random() * (i + 1))
	        var tmp = block_itis[i]; block_itis[i] = block_itis[j]; block_itis[j] = tmp
	    }
	    iti_list = iti_list.concat(block_itis)
	}
	iti_index = 0
	
	function next_iti() {
	    var val = iti_list[iti_index]
	    iti_index += 1
	    if (iti_index >= iti_list.length) { iti_index = 0 }
	    return val
	}
	
	// --- per-block trial-list builder (same fix as the local "Selected rows" bug) ---
	function build_block_trial_list(is_practice_flag) {
	    var n_override = is_practice_flag ? practice_n_trials : test_n_trials
	    var reps = is_practice_flag ? 1 : reps_per_block
	    if (typeof n_override === "string" && n_override.trim().toLowerCase() == "all") {
	        var trial_list = []
	        for (var r = 0; r < reps; r++) { trial_list = trial_list.concat(filtered_stimuli) }
	        for (var i = trial_list.length - 1; i > 0; i--) {
	            var j = Math.floor(Math.random() * (i + 1))
	            var tmp = trial_list[i]; trial_list[i] = trial_list[j]; trial_list[j] = tmp
	        }
	        return trial_list
	    }
	    var n_draw = parseInt(n_override)
	    if (n_draw <= filtered_stimuli.length) {
	        var pool_copy = filtered_stimuli.slice()
	        var out = []
	        for (var i = 0; i < n_draw; i++) {
	            var idx = Math.floor(Math.random() * pool_copy.length)
	            out.push(pool_copy[idx])
	            pool_copy.splice(idx, 1)
	        }
	        return out
	    }
	    var out2 = []
	    for (var i = 0; i < n_draw; i++) {
	        out2.push(filtered_stimuli[Math.floor(Math.random() * filtered_stimuli.length)])
	    }
	    return out2
	}
	
	// --- known pixel sizes, so images can be scaled without a canvas probe ---
	// (pool is flat, so keys here are basenames only)
	IMG_PX = {
	    "left_dorsal.png": [634, 720],
	    "left_palmar.png": [681, 746],
	    "right_dorsal.png": [634, 720],
	    "right_palmar.png": [681, 746],
	    "HLJT_icon.jpg": [816, 808],
	    "instr_pic1.jpg": [680, 535],
	    "instr_pic2_both.jpg": [511, 440],
	    "instr_pic2_left.jpg": [510, 503],
	    "instr_pic2_right.jpg": [506, 503],
	    "instr_pic3.jpg": [680, 454],
	}
	
	function scale_for(rel, target_w, target_h) {
	    var wh = IMG_PX[basename(rel)] || [target_w, target_h]
	    return Math.min(target_w / wh[0], target_h / wh[1])
	}
	
	// --- response boxes shown during ITI / trial / feedback ---
	BOX_SIZE = Math.round(0.07 * SCREEN_H)
	BOX_Y = Math.round(0.85 * SCREEN_H/2)
	BOX_LEFT_X = Math.round(-0.1 * SCREEN_H) - Math.floor(BOX_SIZE / 2)
	BOX_RIGHT_X = Math.round(0.1 * SCREEN_H) - Math.floor(BOX_SIZE / 2)
	STIM_TARGET = Math.round(0.6 * SCREEN_H)
	
	function draw_boxes(c, left_color, right_color) {
	    c.rect({x: BOX_LEFT_X, y: BOX_Y - Math.floor(BOX_SIZE / 2), w: BOX_SIZE, h: BOX_SIZE,
	            fill: true, color: left_color})
	    c.rect({x: BOX_RIGHT_X, y: BOX_Y - Math.floor(BOX_SIZE / 2), w: BOX_SIZE, h: BOX_SIZE,
	            fill: true, color: right_color})
	}
	
	function wrap_line(text, chars_per_line) {
	    var words = String(text).split(/\s+/).filter(function (w) { return w !== "" })
	    var lines = []
	    var cur = ""
	    for (var i = 0; i < words.length; i++) {
	        var candidate = cur === "" ? words[i] : cur + " " + words[i]
	        if (candidate.length > chars_per_line && cur !== "") {
	            lines.push(cur)
	            cur = words[i]
	        } else {
	            cur = candidate
	        }
	    }
	    if (cur !== "") { lines.push(cur) }
	    return lines
	}
	
	function draw_paragraphs(c, text, x, y_start, max_width, style) {
	    var font_size = (style && style.font_size) ? style.font_size : 20
	    var color = (style && style.color) ? style.color : black
	    var paragraphs = String(text).split(/\n+/).filter(function (p) { return p.trim() !== "" })
	    var line_height = Math.round(font_size * 1.35)
	    var chars_per_line = Math.max(10, Math.floor(max_width / (font_size * 0.62)))
	    var y = y_start
	    for (var i = 0; i < paragraphs.length; i++) {
	        var lines = wrap_line(paragraphs[i], chars_per_line)
	        for (var j = 0; j < lines.length; j++) {
	            c.text({text: lines[j], x: x, y: y + line_height / 2, color: color, font_size: font_size})
	            y += line_height
	        }
	        y += line_height * 0.5
	    }
	    return y
	}
	__end__

define inline_javascript trial
	set description "Shows the rotated hand stimulus"
	___run__
	// ITEM: "trial" (Run phase) - shows the rotated hand stimulus
	// Reads this trial's row from the plain JS array built by "block_start"
	// (no items["..."].dm), and exposes its fields as bare variables so they
	// get picked up by the logger.
	var row = trial_list[trial_idx]
	hljt_images = row.hljt_images
	hljt_side = row.hljt_side
	hljt_view = row.hljt_view
	hljt_angle = row.hljt_angle
	hljt_direction = row.hljt_direction
	hljt_correct_both = row.hljt_correct_both
	hljt_correct_one = row.hljt_correct_one
	
	stim_image = basename(hljt_images)
	stim_angle = hljt_angle
	correct_key_value = (correct_col == "hljt_correct_both") ? hljt_correct_both : hljt_correct_one
	var sc_trial = scale_for(stim_image, STIM_TARGET, STIM_TARGET)
	var c = Canvas({background_color: white})
	c.image({fname: stim_image, x: 0, y: 0, scale: sc_trial, rotation: parseFloat(stim_angle)})
	draw_boxes(c, black, black)
	c.show()
	__end__
	set _prepare ""

define inline_javascript trial_feedback_calc
	set description "Computes last_key/last_correct/last_rt from trial_kb"
	___run__
	// ITEM: "trial_feedback_calc" (Run phase)
	// Computes last_key / last_correct / last_rt from the keyboard_response
	// item ("trial_kb") that just ran. OSWeb automatically exposes a
	// per-item response_<name> / response_time_<name> pair in addition to
	// the generic response/response_time, mirroring the local version's logic.
	last_key = response_trial_kb
	last_rt = response_time_trial_kb / 1000.0
	if (last_key === null || last_key === undefined) {
	    last_correct = (String(correct_key_value).toLowerCase() == "none") ? 1 : 0
	} else {
	    last_correct = (last_key == String(correct_key_value)) ? 1 : 0
	}
	trial_idx = trial_idx + 1
	__end__
	set _prepare ""

define keyboard_response trial_kb
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects the hand-laterality response"
	set allowed_responses "{resp_keys}"

define sequence trial_seq
	set flush_keyboard yes
	set description "Stimulus + response"
	run trial True
	run trial_kb True
	run trial_feedback_calc True

define sequence trial_sequence
	set flush_keyboard yes
	set description "ITI, stimulus + response, feedback"
	run ITI_seq True
	run trial_seq True
	run feedback_seq True
	run logger True

define loop trials_loop
	set source_file ""
	set source table
	set repeat 500
	set order sequential
	set description "Loop over trials within a block (array rebuilt by block_start every cycle); repeat is a safe upper bound, break_if stops it at the real trial_count"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if "trial_idx >= trial_count"
	setcycle 0 empty_column ""
	run trial_sequence

define inline_javascript welcome_draw
	set description "Welcome screen"
	___run__
	// ITEM: "welcome" - shows the welcome message + task icon
	var c = Canvas({background_color: white})
	var ficon = basename("HLJT_icon.jpg")
	var sc_icon = scale_for(ficon, 190, 190)
	c.image({fname: ficon, x: 0, y: 250, scale: sc_icon})
	draw_paragraphs(c, msg["welcome_msg"], 0, -100, SCREEN_W - 200, {color: black, font_size: 22})
	c.show()
	__end__
	set _prepare ""

define keyboard_response welcome_kb
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Waits for space"
	set allowed_responses space

define sequence welcome_seq
	set flush_keyboard yes
	set description "Welcome screen"
	run welcome_draw True
	run welcome_kb True

