PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001', 'language': '["English", "French", "Spanish", "German"]'}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['hljt_files/Instructions_both_hands.xlsx', 'hljt_files/Instructions_left_hand.xlsx', 'hljt_files/Instructions_right_hand.xlsx', 'hljt_files/Stimuli_4angles.xlsx', 'hljt_files/Stimuli_4angles_all.xlsx', 'hljt_files/Stimuli_4angles_dorsal.xlsx', 'hljt_files/Stimuli_4angles_palmar.xlsx', 'hljt_files/Stimuli_6angles.xlsx', 'hljt_files/Stimuli_6angles_all.xlsx', 'hljt_files/Stimuli_6angles_dorsal.xlsx', 'hljt_files/Stimuli_6angles_palmar.xlsx', 'hljt_files/Stimuli_8angles.xlsx', 'hljt_files/Stimuli_8angles_all.xlsx', 'hljt_files/Stimuli_8angles_dorsal.xlsx', 'hljt_files/Stimuli_8angles_palmar.xlsx', 'hljt_files/Stimuli_12angles.xlsx', 'hljt_files/Stimuli_12angles_all.xlsx', 'hljt_files/Stimuli_12angles_dorsal.xlsx', 'hljt_files/Stimuli_12angles_palmar.xlsx', 'hljt_instr_images/instr_pic1.jpg', 'hljt_instr_images/instr_pic2_both.jpg', 'hljt_instr_images/instr_pic2_left.jpg', 'hljt_instr_images/instr_pic2_right.jpg', 'hljt_instr_images/instr_pic3.jpg', 'hljt_files/Instructions_both_hands.xlsx', 'hljt_files/Instructions_left_hand.xlsx', 'hljt_files/Instructions_right_hand.xlsx', 'hljt_files/Stimuli_4angles.xlsx', 'hljt_files/Stimuli_6angles.xlsx', 'hljt_files/Stimuli_8angles.xlsx', 'hljt_files/Stimuli_12angles.xlsx', 'hljt_images/left_dorsal.png', 'hljt_images/left_palmar.png', 'hljt_images/right_dorsal.png', 'hljt_images/right_palmar.png', 'HLJT_icon.jpg', 'Language_localiser.xlsx', 'Messages.xlsx']
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  color = 1.0000, 1.0000, 1.0000
  expName = HLJT_online
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    CodeComponent trial_code
      Code Type = Auto->JS
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      Begin Routine:
        # column from conditions file to get correct responses
        if expInfo['response_mode'] == "Both hands":
            correct_keys = hljt_correct_both
            resp_keys = ["s", "l"]
        elif expInfo['response_mode'] == "Right hand":
            correct_keys = hljt_correct_one
            resp_keys = ["g", "h"]
        elif expInfo['response_mode'] == "Left hand":
            correct_keys = hljt_correct_one
            resp_keys = ["g", "h"]
    ImageComponent stimulus
      image [set every repeat] = $hljt_images
      ori [set every repeat] = hljt_angle
      size = (0.45, 0.45)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys = resp_keys
      correctAns = $correct_keys
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
      storeCorrect = True
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    PolygonComponent box_left
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (-0.1, -0.4)
      saveStartStop = False
      shape = rectangle
      size = (0.07, 0.07)
      startVal [time (s)] = 0.0
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    PolygonComponent box_right
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (0.1, -0.4)
      saveStartStop = False
      shape = rectangle
      size = (0.07, 0.07)
      startVal [time (s)] = 0.0
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  Routine load_lg
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    CodeComponent update_language_code
      Code Type = Auto->JS
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      Begin Experiment:
        # we define "lang_code" which is our variable to
        # be used for the language localisation dynamically
        # we set it to English as default language
        lang_code = "EN"
        thisExp.addData("language_code", lang_code)
      Begin Routine:
        # we put this code at the beginning of the routine.
        # at this point the language has already been selected
        # in the dialogue box by the participant

        # now we update the language code based on the
        # language localiser variable ISO_code
        if language == expInfo['language']:
            lang_code = ISO_code

        thisExp.addData("language_code", lang_code)  # add it to output

        # this way now lang_code has the value of ISO_code
        # where language in our Excel sheet matches with the
        # language selected by the participant
  Routine update_msg
    RoutineSettingsComponent update_msg
      saveStartStop = False
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    CodeComponent update_messages_code
      Code Type = Both
      Begin JS Routine:
        // change code that does not auto-translate correctly
        // we use window instead of globals()
        // to create the global variables
        // the rest is the same
        msg_name = message;
        msg_value = eval(lang_code);
        window[msg_name] = msg_value; // here is the change
        psychoJS.experiment.addData("msg_name", msg_name);
        psychoJS.experiment.addData("msg_value", msg_value);
      Begin Routine:
        ## THIS CODE DOES NOT AUTO-TRANSLATE!!!!

        # now that we have selected our new language (lang_code)
        # we can use a loop to iterate over the messages
        # every iteration, we're gonna update the value of our
        # global variables with the value corresponding to the
        # lang_code (ISO_code from the language localiser)
        # this way we don't need to manually specify the text

        # this iteration, select the message
        msg_name = message  # e.g. variable "welcome_msg"
        # for this iteration, assign the value based on code
        msg_value = eval(lang_code) # e.g. "Bienvenido" if lang_code = "ES"
        # update message based on code
        globals()[msg_name] = msg_value  # e.g. should update the value of welcome_msg by "Bienvenido"
        # finally we add the values to output just to check
        thisExp.addData("msg_name", msg_name)
        thisExp.addData("msg_value", msg_value)
  Routine instructions
    RoutineSettingsComponent instructions
      saveStartStop = False
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    CodeComponent inst_code
      Code Type = Auto->JS
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      Begin Experiment:
        inst_msg = ""
        text_x = 0
      Begin Routine:
        # hide mouse for the rest of the experiment
        win.mouseVisible = False
        # get column from excel sheet based on language code
        try:
            inst_msg = eval(f"inst_msg_{lang_code}")
        # default to english if this fails
        except ReferenceError:
            inst_msg = inst_msg_EN

        # if we are not goint to show feedback in the main
        # task, don't show screen explaining it
        if expInfo["feedback"] == "No feedback" and instructions_loop.thisN == 2:
            continueRoutine = False
    TextComponent inst_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.025
      pos [set every repeat] = (-0.35, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $inst_msg
      wrapWidth = 0.8
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    TextComponent advance_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (0, -0.45)
      saveStartStop = False
      startVal [time (s)] = 0.5
      text [set every repeat] = $adv_msg
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    ImageComponent inst_image
      color = 1.0000, 1.0000, 1.0000
      image [set every repeat] = $inst_pics
      pos = (0.5, 0)
      saveStartStop = False
      size [set every repeat] = (image_w, image_h)
      startVal [time (s)] = 0.0
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    KeyboardComponent inst_adv
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine bye
    RoutineSettingsComponent bye
      stopVal [duration (s)] = 3
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    TextComponent bye_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $bye_msg
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  Routine welcome
    RoutineSettingsComponent welcome
      saveStartStop = False
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    TextComponent welcome_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.035
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $welcome_msg
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    KeyboardComponent adv_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent hljt_image
      image = HLJT_icon.jpg
      pos = (0, -0.3)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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  Routine feedback
    RoutineSettingsComponent feedback
      stopVal [duration (s)] = $feedback_time
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    CodeComponent feedback_code
      Code Type = Auto->JS
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      Begin Routine:
        if fb == True:
            # If response is correct:
            if key_resp.corr == 1:
                if correct_keys == hljt_correct_both:
                    if key_resp.keys == "s":
                        fill_left = green
                        fill_right = black
                    elif key_resp.keys == "l":
                        fill_left = black
                        fill_right = green
                elif correct_keys == hljt_correct_one:
                    if key_resp.keys == "g":
                        fill_left = green
                        fill_right = black
                    elif key_resp.keys == "h":
                        fill_left = black
                        fill_right = green
            #If response is incorrect:
            elif key_resp.corr == 0:
                if correct_keys == hljt_correct_both:
                    if key_resp.keys == "s":
                        fill_left = red
                        fill_right = black
                    elif key_resp.keys == "l":
                        fill_left = black
                        fill_right = red
                elif correct_keys == hljt_correct_one:
                    if key_resp.keys == "g":
                        fill_left = red
                        fill_right = black
                    elif key_resp.keys == "h":
                        fill_left = black
                        fill_right = red
        elif fb == False:
            if key_resp.keys in ["s", "g"]:
                fill_left = white
                fill_right = black
            elif key_resp.keys in ["h", "l"]:
                fill_left = black
                fill_right = white
    ImageComponent feedback_stimulus
      image [set every repeat] = $hljt_images
      ori [set every repeat] = hljt_angle
      size = (0.45, 0.45)
      startVal [time (s)] = 0.0
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    PolygonComponent feedback_box_left
      fillColor [set every repeat] = $fill_left
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (-0.1, -0.4)
      saveStartStop = False
      shape = rectangle
      size = (0.07, 0.07)
      startVal [time (s)] = 0.0
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    PolygonComponent feedback_box_right
      fillColor [set every repeat] = $fill_right
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (0.1, -0.4)
      saveStartStop = False
      shape = rectangle
      size = (0.07, 0.07)
      startVal [time (s)] = 0.0
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  Routine ITI
    RoutineSettingsComponent ITI
      stopVal [duration (s)] = $current_iti
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    CodeComponent ITI_code
      Code Type = Auto->JS
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      Begin Experiment:
        # Inter-trial interval (ITI)
        current_iti = 0.8 # placeholder
        iti_index = 0
      Begin Routine:
        # obtain current iti through the index
        current_iti = iti_list[iti_index]
        # increase for next trial
        iti_index += 1
        # check if the list has finished
        if iti_index >= len(iti_list):
            iti_index = 0
        # add to output
        thisExp.addData('ITI', current_iti)
    PolygonComponent ITI_fix_cross
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      saveStartStop = False
      shape = cross
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    PolygonComponent ITI_box_left
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (-0.1, -0.4)
      saveStartStop = False
      shape = rectangle
      size = (0.07, 0.07)
      startVal [time (s)] = 0.0
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    PolygonComponent ITI_box_right
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (0.1, -0.4)
      saveStartStop = False
      shape = rectangle
      size = (0.07, 0.07)
      startVal [time (s)] = 0.0
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  Routine block_start
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    CodeComponent block_start_code
      Code Type = Auto->JS
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      Begin Experiment:
        block_number = 0
        fb = True
        block_message = ""
      Begin Routine:
        win.mouseVisible = False
        # start block at 1 and increase every iteration
        block_number += 1
        thisExp.addData("block_number", block_number)
        # set up block messages according to task progress
        # and minimum time for pauses
        if block_number == 1 & pract_block == 1:
            # practice block
            block_message = practice_block_msg
        else:
            # task block
            block_message = task_block_msg
    TextComponent block_number_text
      color = -1.0000, 0.4980, 1.0000
      letterHeight = 0.05
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      text [set every repeat] = $str(block_number) + ' ' + out_of_msg + ' ' + str(total_blocks) + ' ' + blocks_msg
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    TextComponent block_start_main_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text [set every repeat] = $block_message
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    TextComponent block_start_adv_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (0, -0.45)
      saveStartStop = False
      startVal [time (s)] = 0.5
      text [set every repeat] = $adv_msg
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    KeyboardComponent block_adv_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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    CodeComponent block_settings_code
      Code Type = Auto->JS
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      End Routine:
        # change conditions based on block
        # if there is a practice block
        if pract_block == 1:
            if block_number == 1:
                # present block as practice
                block_msg = practice_block_msg
                reps_per_block = 1
            elif block_number > 1: # task blocks
                block_msg = task_block_msg # regular text
                reps_per_block = 2
                # if we want feedback in these blocks
                if task_fb == False:
                    fb = False

        # if there is no practice block
        elif pract_block == 0:
            reps_per_block = 2
            block_msg = task_block_msg
            if task_fb == False:
                fb = False
        thisExp.addData("reps_per_block", reps_per_block)
  Routine block_end
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    CodeComponent block_end_code
      Code Type = Auto->JS
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      Begin Experiment:
        block_end_message = ""
      Begin Routine:
        if pract_block == 1 & block_number == 1:
            block_end_message = practice_end_msg
        else:
            block_end_message = block_end_msg
    CodeComponent timer_code
      Code Type = Both
      Begin JS Routine:
        screen_timer = new util.Clock();
      Begin Routine:
        # DOES NOT AUTOTRANSLATE!!!!
        # initialize timer
        screen_timer = core.Clock()
      Each Frame:
        # show timer
        elapsed = screen_timer.getTime()
        minutes = int(elapsed // 60)
        seconds = int(elapsed % 60)
        timer_text = f"{minutes:02d}:{seconds:02d}"
      Each JS Frame:
        elapsed = screen_timer.getTime();
        minutes = Math.floor(elapsed / 60);
        seconds = Math.floor(elapsed % 60);
        timer_text = `${minutes.toString().padStart(2, '0')}:${seconds.toString().padStart(2, '0')}`;
    TextComponent block_end_main_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text [set every repeat] = $block_end_message
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    TextComponent timer
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (-0.8, -0.45)
      startVal [time (s)] = 0.0
      text [set every frame] = $timer_text
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    TextComponent block_end_adv_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (0, -0.45)
      saveStartStop = False
      startVal [time (s)] = 1
      text [set every repeat] = $adv_msg
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    KeyboardComponent block_end_adv_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1
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  Routine exp_settings
    RoutineSettingsComponent exp_settings
      saveStartStop = False
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    CodeComponent SET_DEFAULT_SETTINGS_FOR_LOCAL_AND_ONLINE_USE
      Code Type = Auto->JS
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      Begin Experiment:
        # response mode - options:
        # ["Both hands", "Right hand", "Left hand"]
        expInfo['response_mode'] = "Both hands"
        # whether we want a short practice block
        # ["Yes", "No"]
        expInfo['practice_block'] = "Yes"
        # how many repetitions per unique stimulus
        # ["8", "12", "4"]
        expInfo['n_reps'] = "8"
        # whether we want feedback in main task blocks
        # ["0.3", "0.5", "0.8", "1", "No feedback"]
        expInfo['feedback'] = "No feedback"
        # THE SETTINGS FOR THE STIMULI (ANGLES AND VIEWS)
        # ARE SET UP VIA THE CONDITIONS FILE IN THE
        # TRIALS_LOOP
        # THE CODE BELOW IS JUST A PLACEHOLDER!!
        # how many rotations (angles)
        # [ "8 (increments of 45º)",
        #   "4 (increments of 90º)",
        #   "6 (increments of 60º)",
        #   "12 (increments of 30º)"]
        expInfo['n_angles'] = "8 (increments of 45º)"
        # whether we want palmar or dorsal stimuli, or both
        # ["Palmar and Dorsal", "Palmar", "Dorsal"]
        expInfo['hand_views'] = "Palmar and Dorsal"
    CodeComponent response_mode
      Code Type = Auto->JS
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      Begin Experiment:
        use_i = "" # encodes which Excel file to use

        # response mode
        if expInfo['response_mode'] == "Both hands":
            use_i = "hljt_files/Instructions_both_hands.xlsx"
        elif expInfo['response_mode'] == "Right hand":
            use_i = "hljt_files/Instructions_right_hand.xlsx"
        elif expInfo['response_mode'] == "Left hand":
            use_i = "hljt_files/Instructions_left_hand.xlsx"
    CodeComponent practice_block
      Code Type = Auto->JS
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      Begin Experiment:
        if expInfo['practice_block'] == "Yes":
            pract_block = 1
        else:
            pract_block = 0
    CodeComponent number_of_stimuli
      Code Type = Auto->JS
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      Begin Experiment:
        # number of stimuli
        # n_reps sets the number of repetitions in total
        # per unique stimulus
        # we want 2 reps per block, and therefore
        # the number of main blocks will vary accordingly
        main_blocks = 0
        reps_per_block = 2
        if expInfo['n_reps'] == "4":
            main_blocks = 2  # * 2 reps_per_block = 4
        elif expInfo['n_reps'] == "8":
            main_blocks = 4 # ...same
        elif expInfo['n_reps'] == "12":
            main_blocks = 6  # ...same

        # pract_block turns 1 or 0 if a practice block is
        # requested, therefore the total number of blocks is
        # the number of main blocks + pract_block
        total_blocks = main_blocks + pract_block
    CodeComponent feedback_settings
      Code Type = Auto->JS
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      Begin Experiment:
        # define feedback time
        feedback_time = expInfo["feedback"]
        fb = True  # by default, show feedback
        task_fb = True # placeholder, it's updated after
        if feedback_time == "No feedback":
            feedback_time = 0.3  # the boxed will turn white
            task_fb = False
        else:
            feedback_time = float(feedback_time)

        # colors
        black = [-1, -1, -1]
        green = [-1, 0.0039, -1]
        red = [1, -1, -1]
        white = [1, 1, 1]
    CodeComponent number_of_angles
      Code Type = Py
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      Begin Experiment:
        conditions_file = "Stimuli_4angles.xlsx"

        if expInfo['n_angles'] == "4 (increments of 90º)":
            conditions_file = "hljt_files/Stimuli_4angles.xlsx"
        elif expInfo['n_angles'] == "6 (increments of 60º)":
            conditions_file = "hljt_files/Stimuli_6angles.xlsx"
        elif expInfo['n_angles'] == "8 (increments of 45º)":
            conditions_file = "hljt_files/Stimuli_8angles.xlsx"
        elif expInfo['n_angles'] == "12 (increments of 30º)":
            conditions_file = "hljt_files/Stimuli_12angles.xlsx"
    CodeComponent hand_views
      Code Type = Py
      Begin Experiment:
        # DOES NOT AUTOTRANSLATE!!!!
        # TO MODIFY IT FOR ONLINE STUDIES, THE PSYCHOJS
        # SIDE HAS TO BE MODIFIED MANUALLY!!
        import pandas as pd
        # load conditions file in data frame
        conditions_df = pd.read_excel(conditions_file)

        # filter based on view
        if expInfo['hand_views'] == "Palmar":
            filtered_df = conditions_df[conditions_df['hljt_view'] == 'palmar']
        elif expInfo['hand_views'] == "Dorsal":
            filtered_df = conditions_df[conditions_df['hljt_view'] == 'dorsal']
        else:
            filtered_df = conditions_df

        # generate conditions file for this run. It overwrites
        trial_conditions = "Stimuli_last_run.csv"
        filtered_df.to_csv(trial_conditions, index=False)
    CodeComponent inter_trial_interval
      Code Type = Both
      Begin Experiment:
        # DOES NOT AUTOTRANSLATE!!!!
        # TO MODIFY IT FOR ONLINE STUDIES, THE PSYCHOJS
        # SIDE HAS TO BE MODIFIED MANUALLY!!
        import numpy as np
        # define parameters
        n_trials = 600 # higher number than actual trials
        block_size = 64  # same
        low_iti_range = (0.6, 1)
        high_prob_range = (0.75, 0.85)
        high_prob_percentage = 0.5  # 50% values within high_prob_range

        # create list of ITIs
        iti_list = []

        for block in range(n_trials // block_size):
            # for each block:
            n_high_prob = int(block_size * high_prob_percentage)  # trials in high prob range
            n_low_prob = block_size - n_high_prob  # rest in general range
            # generate ITIs in the high prob range
            high_prob_itis = np.random.uniform(low=high_prob_range[0], high=high_prob_range[1], size=n_high_prob)
            # generate ITIs in the general range
            low_prob_itis = []
            while len(low_prob_itis) < n_low_prob:
                iti = np.random.uniform(low=low_iti_range[0], high=low_iti_range[1])
                if not (high_prob_range[0] <= iti <= high_prob_range[1]):
                    low_prob_itis.append(iti)
            # combine them
            block_itis = np.concatenate((high_prob_itis, low_prob_itis))
            # shuffle within block
            np.random.shuffle(block_itis)
            # add block to list
            iti_list.extend(block_itis)
      Begin JS Experiment:
        // ==== Define parameters ====
        let n_trials = 600;
        let block_size = 64;
        let low_iti_range = [0.6, 1.0];
        let high_prob_range = [0.75, 0.85];
        let high_prob_percentage = 0.5;

        // ==== Utility functions ====

        // Uniform random number in [min, max)
        function randUniform(min, max) {
            return min + Math.random() * (max - min);
        }

        // Shuffle array in place (Fisher–Yates)
        function shuffle(array) {
            for (let i = array.length - 1; i > 0; i--) {
                const j = Math.floor(Math.random() * (i + 1));
                [array[i], array[j]] = [array[j], array[i]];
            }
        }

        // ==== Build ITI list ====
        // MUST be global
        iti_list = [];

        let n_blocks = Math.floor(n_trials / block_size);

        for (let block = 0; block < n_blocks; block++) {

            let n_high_prob = Math.floor(block_size * high_prob_percentage);
            let n_low_prob = block_size - n_high_prob;

            let high_prob_itis = [];
            for (let i = 0; i < n_high_prob; i++) {
                high_prob_itis.push(
                    randUniform(high_prob_range[0], high_prob_range[1])
                );
            }

            let low_prob_itis = [];
            while (low_prob_itis.length < n_low_prob) {
                let iti = randUniform(low_iti_range[0], low_iti_range[1]);

                if (!(iti >= high_prob_range[0] && iti <= high_prob_range[1])) {
                    low_prob_itis.push(iti);
                }
            }

            let block_itis = high_prob_itis.concat(low_prob_itis);
            shuffle(block_itis);

            iti_list = iti_list.concat(block_itis);
        }

        // NOW iti_list is globally available
        console.log("ITI LIST LENGTH:", iti_list.length);
    CodeComponent SET_STIMULI_FOR_ONLINE_USE
      Code Type = Auto->JS
      Begin Experiment:
        # SET THE STIMULI BY CHANGING THE CONDITIONS
        # FILE IN THE TRIALS_LOOP!!!
        # BY DEFAULT IT WILL SET 8 ANGLES WITH BOTH DORSAL
        # AND PALMAR STIMULI, SO 32 UNIQUE STIMULI OVERALL
        # (8 angles x 2 views x 2 sides)
  Routine countdown
    RoutineSettingsComponent countdown
      saveStartStop = False
      stopVal [duration (s)] = 3
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    TextComponent countdown_3
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.07
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.9
      text = 3
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    TextComponent countdown_4
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.07
      saveStartStop = False
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.9
      text = 2
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    TextComponent countdown_1
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.07
      saveStartStop = False
      startVal [time (s)] = 2
      stopVal [duration (s)] = 0.9
      text = 1
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  Routine demographics
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    CodeComponent demo_code
      Code Type = Auto->JS
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      Begin Routine:
        # make mouse visible
        win.mouseVisible = True
    TextComponent demographics_title
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.035
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $demographics_msg
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    TextComponent age_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.04
      pos = (0, 0.32)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $age_msg
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    TextboxComponent age_textbox
      bold = False
      borderColor = -1.0000, -1.0000, -1.0000
      color = -1.0000, -1.0000, -1.0000
      editable = True
      letterHeight = 0.03
      placeholder = ...
      pos = (0, 0.25)
      saveStartStop = False
      size = (0.12, 0.07)
      startVal [time (s)] = 0.0
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    TextComponent gender_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.04
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $gender_msg
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    SliderComponent gender_slider
      borderColor = -1.0000, -1.0000, -1.0000
      color = -1.0000, -1.0000, -1.0000
      fillColor = 0.4824, 0.4353, -0.1608
      font = Noto Sans
      forceEndRoutine = False
      granularity = 1
      labels = ('', '', '', '', '', '')
      letterHeight = 0.025
      saveStartStop = False
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6)
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    TextboxComponent label_female
      anchor = bottom-center
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.03
      lineSpacing = 0.8
      pos = (-0.5, -0.1)
      size = (0.15, 0.05)
      startVal [time (s)] = 0.0
      text [set every repeat] = $f_msg
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    TextboxComponent label_male
      anchor = bottom-center
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.03
      lineSpacing = 0.8
      pos = (-0.3, -0.1)
      size = (0.15, 0.05)
      startVal [time (s)] = 0.0
      text [set every repeat] = $m_msg
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    TextboxComponent label_transgender
      anchor = bottom-center
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.0275
      lineSpacing = 0.8
      pos = (-0.1, -0.1)
      size = (0.18, 0.05)
      startVal [time (s)] = 0.0
      text [set every repeat] = $tg_msg
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    TextboxComponent label_nonbinary
      anchor = bottom-center
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.03
      lineSpacing = 0.8
      pos = (0.1, -0.1)
      size = (0.15, 0.05)
      startVal [time (s)] = 0.0
      text [set every repeat] = $nb_msg
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    TextboxComponent label_other
      anchor = bottom-center
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.03
      lineSpacing = 0.8
      pos = (0.3, -0.1)
      size = (0.15, 0.05)
      startVal [time (s)] = 0.0
      text [set every repeat] = $o_msg
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    TextboxComponent label_prefer_not_say
      anchor = bottom-center
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.022
      lineSpacing = 0.8
      pos = (0.5, -0.1)
      size = (0.15, 0.05)
      startVal [time (s)] = 0.0
      text [set every repeat] = $pns_msg
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    TextComponent laterality_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.04
      pos = (0, -0.27)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $laterality_msg
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    SliderComponent laterality_slider
      borderColor = -1.0000, -1.0000, -1.0000
      color = -1.0000, -1.0000, -1.0000
      fillColor = 0.4824, 0.4353, -0.1608
      font = Noto Sans
      forceEndRoutine = False
      granularity = 1
      labels = ('', '', '')
      letterHeight = 0.025
      pos = (0, -0.35)
      saveStartStop = False
      size = (0.5, 0.05)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3)
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    TextboxComponent label_left
      anchor = bottom-center
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.03
      lineSpacing = 0.8
      pos = (-0.25, -0.45)
      size = (0.15, 0.05)
      startVal [time (s)] = 0.0
      text [set every repeat] = $left_msg
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    TextboxComponent label_ambi
      anchor = bottom-center
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.03
      lineSpacing = 0.8
      pos = (0, -0.45)
      size = (0.2, 0.05)
      startVal [time (s)] = 0.0
      text [set every repeat] = $ambi_msg
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    TextboxComponent label_right
      anchor = bottom-center
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.03
      lineSpacing = 0.8
      pos = (0.25, -0.45)
      size = (0.15, 0.05)
      startVal [time (s)] = 0.0
      text [set every repeat] = $right_msg
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    PolygonComponent next_poly_2
      fillColor = 0.6078, -0.2784, -0.2784
      lineColor = 0.6078, -0.2784, -0.2784
      pos = (0.7, -0.35)
      shape = rectangle
      size = (0.2, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent next_text_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.035
      pos = (0.7, -0.35)
      startVal [time (s)] = 0.0
      text [set every repeat] = $next_msg
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    MouseComponent mouse_demo
      clickable = next_poly_2
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      startVal [time (s)] = 0.0
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Flow
  Routine exp_settings
  LoopInitiator load_lg_loop loopType="TrialHandler"
    conditionsFile = Language_localiser.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'language': 'English', 'ISO_code': 'EN'},
      {'language': 'Spanish', 'ISO_code': 'ES'},
      {'language': 'French', 'ISO_code': 'FR'},
      {'language': 'German', 'ISO_code': 'DE'}]
    Routine load_lg
  LoopTerminator load_lg_loop
  LoopInitiator update_msg_loop loopType="TrialHandler"
    conditionsFile = Messages.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'message': 'welcome_msg', 'EN': 'Welcome to the Hand Laterality Judgement Task!\n\nThe purpose is to quantify your ability to make laterality judgements (right/left) on hand images.\n\nPress SPACE to start.', 'ES': '¡Bienvenid@ a la Tarea de Discriminación de Lateralidad!\n\nEl objetivo es cuantificar tu capacidad para decidir la lateralidad (derecha/izquierda) de imágenes de manos.\n\nPresiona ESPACIO para empezar.', 'FR': "Bienvenue à la Tâche de Jugement de Latéralité de la Main !\n\nLe but est de quantifier votre capacité à décider de la latéralité (droite/gauche) d'images de mains.\n\nA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,
      {'message': 'adv_msg', 'EN': 'Press SPACE to continue', 'ES': 'Presiona ESPACIO para continuar', 'FR': 'Appuyez sur ESPACE pour continuer', 'DE': 'Drücken Sie die LEERTASTE, um fortzufahren'},
      {'message': 'bye_msg', 'EN': 'This is the end of the experiment\n\nThanks for participating!\n\nWait 3 seconds to exit', 'ES': 'Este es el final del experimento\n\n¡Gracias por participar!\n\nEspera 3 segundos para salir', 'FR': "Ceci est la fin de l'expérience\n\nMerci d'avoir participé !\n\nAttendez 3 secondes pour quitter", 'DE': 'Dies ist das Ende des Experiments.\n\nVielen Dank für Ihre Teilnahme!\n\nWarten Sie 3 Sekunden, bevor Sie das Experiment beenden.'},
      {'message': 'out_of_msg', 'EN': 'out of', 'ES': 'de', 'FR': 'sur', 'DE': 'von'}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
    Routine update_msg
  LoopTerminator update_msg_loop
  Routine welcome
  Routine demographics
  LoopInitiator instructions_loop loopType="TrialHandler"
    conditionsFile = $use_i
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine instructions
  LoopTerminator instructions_loop
  LoopInitiator blocks_loop loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = total_blocks
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    Routine block_start
    Routine countdown
    LoopInitiator trials_loop loopType="TrialHandler"
      conditionsFile = hljt_files/Stimuli_8angles_all.xlsx
      loopType = random
      nReps = reps_per_block
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      conditions:
        [{'hljt_images': 'hljt_images/right_palmar.png', 'hljt_side': 'right', 'hljt_view': 'palmar', 'hljt_angle': 0, 'hljt_direction': 'up', 'hljt_correct_both': 'l', 'hljt_correct_one': 'h'},
        {'hljt_images': 'hljt_images/right_palmar.png', 'hljt_side': 'right', 'hljt_view': 'palmar', 'hljt_angle': 45, 'hljt_direction': 'lateral', 'hljt_correct_both': 'l', 'hljt_correct_one': 'h'},
        {'hljt_images': 'hljt_images/right_palmar.png', 'hljt_side': 'right', 'hljt_view': 'palmar', 'hljt_angle': 90, 'hljt_direction': 'lateral', 'hljt_correct_both': 'l', 'hljt_correct_one': 'h'},
        {'hljt_images': 'hljt_images/right_palmar.png', 'hljt_side': 'right', 'hljt_view': 'palmar', 'hljt_angle': 135, 'hljt_direction': 'lateral', 'hljt_correct_both': 'l', 'hljt_correct_one': 'h'},
        {'hljt_images': 'hljt_images/right_palmar.png', 'hljt_side': 'right', 'hljt_view': 'palmar', 'hljt_angle': 180, 'hljt_direction': 'down', 'hljt_correct_both': 'l', 'hljt_correct_one': 'h'},
        {'hljt_images': 'hljt_images/right_palmar.png', 'hljt_side': 'right', 'hljt_view': 'palmar', 'hljt_angle': 225, 'hljt_direction': 'medial', 'hljt_correct_both': 'l', 'hljt_correct_one': 'h'},
        {'hljt_images': 'hljt_images/right_palmar.png', 'hljt_side': 'right', 'hljt_view': 'palmar', 'hljt_angle': 270, 'hljt_direction': 'medial', 'hljt_correct_both': 'l', 'hljt_correct_one': 'h'}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
      Routine ITI
      Routine trial
      Routine feedback
    LoopTerminator trials_loop
    Routine block_end
  LoopTerminator blocks_loop
  Routine bye
